<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Delphi</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:SynchronizeTimestamp" />
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:MuteReplies>false</harp:MuteReplies>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Standby</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>false</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM13</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:AuxInState" />
            </Expression>
            <Expression xsi:type="HasFlag">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:AuxiliaryInputs">
                <Value>Aux0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>PokeOnset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PokeOnset</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>PokeOffset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PokeOffset</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
        <rx:Name>BufferIntervalElapsed</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BufferIntervalElapsed</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PokeOnset</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>