WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(HardwareSettings, RuleSettings, NextRuleSettings, SwitchDateTime)
-> GroupWorkflow InitializeSettings
    ExternalizedMapping(Path(DisplayName=HardwareSettings))
    -> Bonsai.IO.ReadAllText(Path=schemas\hardware-schema3.yml)
    -> HardwareSchema.DeserializeFromYaml(Type=TypeMapping<HardwareSchema.HardwareSchema>)
    -> Take(Count=1)
    -> AsyncSubject HardwareSchema

    ExternalizedMapping(Path(DisplayName=RuleSettings))
    -> RuleSelector(Path=schemas\rule-exponential.yml) => #6
    ExternalizedMapping(Path(DisplayName=NextRuleSettings))
    -> RuleSelector(Path=schemas\rule-exponential.yml) => #8
    ExternalizedMapping(DueTimes(DisplayName=SwitchDateTime))
    -> RuleTimer(DueTimes(RuleSchedule(DueTime=2026-01-30T11:50:00, RuleSchema=schemas\rule-5.yml))) => #10
    #8, #10 -> Sample => #11
    #6, #11 -> Merge
    -> RuleSchema.DeserializeFromYaml(Type=TypeMapping<RuleSchema.RuleSchema>)
    -> BehaviorSubject RuleSettings

    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=DelphiController)
    -> AsyncSubject ControllerSettings

    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,RuleSchema.StateDefinition)> StateDictionary
    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,RuleSchema.StateDefinition)> TransitionState

    SubscribeSubject RuleSettings
    -> SelectMany GenerateStateDictionary
        WorkflowInput Source1

        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=Rule.StateDefinitions)
        -> Merge => #3
        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=Rule.StateDefinitions.Count)
        -> PropertyMapping(Count) => #6
        #3, #6 -> Take(Count=5)
        -> ToDictionary(KeySelector=Name, ElementSelector=it)
        -> WorkflowOutput
    -> MulticastSubject StateDictionary
    -> MulticastSubject TransitionState

GroupWorkflow DelphiController
    BehaviorSubject<Bonsai.Harp.HarpMessage> DelphiCommands
    -> Delay(DueTime=PT0.1S) => #1
    ExternalizedMapping(Name(DisplayName=ControllerSettings))
    -> SubscribeSubject ControllerSettings
    -> MemberSelector(Selector=ComPort)
    -> PropertyMapping(PortName) => #5
    #1, #5 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM8)
    -> PublishSubject DelphiEvents

    Unit
    -> GroupWorkflow DisableCameraTriggers
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCamTriggerPayload(EnableCamTrigger=1))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow DisableFSM
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=0))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow EnableValveLeds
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableValveLedsPayload(EnableValveLeds=1))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetMinimumPokeTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=MinPokeTimeUs)
        -> PropertyMapping(MinimumPokeTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinimumPokeTimeUSPayload(MinimumPokeTimeUS=10000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetMinimumOdorDeliveryTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=MinOdorDeliveryTimeUs)
        -> PropertyMapping(MinOdorDeliveryTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinOdorDeliveryTimeUSPayload(MinOdorDeliveryTimeUS=10000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetFinalValveEnergizedTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=FinalValveEnergizedTimeUs)
        -> PropertyMapping(FinalValveEnergizedTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFinalValveEnergizedTimeUSPayload(FinalValveEnergizedTimeUS=110000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetVacuumSetupTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=VacuumSetupTimeUs)
        -> PropertyMapping(VacuumSetupTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumSetupTimeUSPayload(VacuumSetupTimeUS=10000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetVacuumCloseTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=VacuumCloseTimeUs)
        -> PropertyMapping(VacuumCloseTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumCloseTimeUSPayload(VacuumCloseTimeUS=20000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetOdorTransitionTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=OdorTransitionTimeUs)
        -> PropertyMapping(OdorTransitionTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateOdorTransitionTimeUSPayload(OdorTransitionTimeUS=20000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetPokePin
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=PokePin)
        -> PropertyMapping(PokePin) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreatePokePinPayload(PokePin=22))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetPokePinInverted
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreatePokePinInvertedPayload(PokePinInverted=1))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetMaxOdorDeliveryTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=MaxOdorDeliveryTimeUs)
        -> PropertyMapping(MaxOdorDeliveryTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMaxOdorDeliveryTimeUSPayload(MaxOdorDeliveryTimeUS=10000000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> Unit
    -> Take(Count=1)
    -> AsyncSubject ControllerReady

    ExternalizedMapping(Name(DisplayName=InitiateFSM))
    -> BehaviorSubject<System.Reactive.Unit> InitiateFSM
    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=1))
    -> MulticastSubject DelphiCommands

    SubscribeSubject DelphiEvents
    -> Take(Count=1)
    -> Delay(DueTime=PT5S)
    -> Bonsai.Harp.CreateMessage
      MessageType=Write
      Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
    -> MulticastSubject DelphiCommands

    ExternalizedMapping(Name(DisplayName=QueueOdor))
    -> BehaviorSubject<System.Int32> QueueOdor => #34
    -> Disable InputMapping(QueuedOdorIndex(Selector=it)) => #35
    #34 -> PropertyMapping(QueuedOdorMask) => #36
    Source1=#35, Source1=#36, Source2=#36 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateQueuedOdorMaskPayload(QueuedOdorMask=1))
    -> MulticastSubject DelphiCommands

    SubscribeSubject DelphiEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> AllenNeuralDynamics.DelphiController.FilterRegister(FilterType=Include, Register=AllenNeuralDynamics.DelphiController.PokeState)
    -> IntProperty(Value=1)
    -> Accumulate
    -> BehaviorSubject PokeCount

GroupWorkflow StateController
    BehaviorSubject<System.String> CurrentState

    SubscribeSubject ControllerReady => #1
    SubscribeSubject StateDictionary => #2
    #1, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Index(Operand=StringProperty(Value=DefaultState))
    -> MemberSelector(Selector=OdorIndex)
    -> MulticastSubject QueueOdor
    -> Delay(DueTime=PT1S)
    -> Unit
    -> MulticastSubject InitiateFSM
    -> StringProperty(Value=DefaultState)
    -> MulticastSubject BeginState
    -> Take(Count=1)

    BehaviorSubject<System.String> BeginState => #14
    -> SelectMany SelectState
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject StateName
        -> MulticastSubject CurrentState

        SubscribeSubject StateDictionary => #4
        SubscribeSubject StateName
        -> PropertyMapping(Key) => #6
        #4, #6 -> TryLookupOrDefault(DefaultState=DefaultState, Key=OdorA)
        -> MemberSelector(Selector=OdorIndex)
        -> MulticastSubject QueueOdor

        SubscribeSubject DelphiEvents
        -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.QueuedOdorMask)
        -> Condition OdorConsumed
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<System.SByte>(Value=0))
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject StateComplete

        SubscribeSubject StateName
        -> Condition Default
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=DefaultState))
            -> WorkflowOutput
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateForceFSMPayload(ForceFSM=1))
        -> MulticastSubject DelphiCommands

        SubscribeSubject StateComplete => #19
        SubscribeSubject TransitionState => #20
        SubscribeSubject StateComplete => #21
        #20, #21 -> SubscribeWhen => #22
        SubscribeSubject StateName
        -> PropertyMapping(Key) => #24
        #22, #24 -> TryLookupOrDefault(DefaultState=DefaultState, Key=OdorA)
        -> MemberSelector(Selector=TransitionsTo) => #26
        #19, #26 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it.Item1 as CurrentState, it.Item2 as TransitionState)
        -> Take(Count=1)
        -> WorkflowOutput
    -> MemberSelector(Selector=TransitionState)
    -> UniformSampleStateProbabilities => #17
    -> Condition SampleWithoutReplacement => #18
        WorkflowInput Source1 => #0
        SubscribeSubject RuleSettings => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Rule.SampleWithReplacement)
        -> BitwiseNot
        -> WorkflowOutput
    #18, #14 -> WithLatestFrom => #19
    SubscribeSubject StateDictionary => #20
    SubscribeSubject TransitionState => #21
    #20, #21 -> CombineLatest => #22
    #19, #22 -> WithLatestFrom
    -> UpdateTransitionState
    -> MulticastSubject TransitionState => #25
    #25, #19 -> Zip
    -> MemberSelector(Selector=Item2.Item1) => #27
    #17 -> Condition SampleWithReplacement => #28
        WorkflowInput Source1 => #0
        SubscribeSubject RuleSettings => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Rule.SampleWithReplacement)
        -> WorkflowOutput
    #27, #28 -> Merge
    -> MulticastSubject BeginState

GroupWorkflow CameraController
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=CameraSettings1.FrameRate)
    -> PropertyMapping(TriggerFps)
    -> GroupWorkflow CameraController
        BehaviorSubject<System.Reactive.Unit> StartCamera
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateCamPinPayload(CamPin=26))
        -> MulticastSubject DelphiCommands => #2
        ExternalizedMapping(FrameRate(DisplayName=TriggerFps)) => #3
        #2, #3 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFrameRatePayload(FrameRate=60))
        -> MulticastSubject DelphiCommands => #5
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.DutyCycle)
        -> PropertyMapping(DutyCycle) => #8
        #5, #8 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateDutyCyclePayload(DutyCycle=0.5))
        -> MulticastSubject DelphiCommands
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCamTriggerPayload(EnableCamTrigger=1))
        -> MulticastSubject DelphiCommands

        BehaviorSubject<System.Reactive.Unit> StopCamera
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCamTriggerPayload(EnableCamTrigger=0))
        -> MulticastSubject DelphiCommands

    SubscribeSubject DelphiEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.TimestampedCamPinState) => #6
    Disable SubscribeSubject CameraStarted => #7
    SubscribeSubject Camera1Started => #8
    SubscribeSubject Arducam1Started => #9
    SubscribeSubject Arducam2Started => #10
    #7, #8, #9, #10 -> Zip
    -> Take(Count=1) => #12
    #6, #12 -> SkipUntil
    -> MemberSelector(Selector=Seconds)
    -> PublishSubject FrameEvent

    ExternalizedMapping(Index(DisplayName=Arducam1Index))
    -> Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> PublishSubject Arducam1Frame

    SubscribeSubject Arducam1Frame
    -> IsEmpty
    -> BitwiseNot
    -> PublishSubject Arducam1Started

    SubscribeSubject Arducam1Frame => #23
    SubscribeSubject FrameEvent
    -> Take(Count=1) => #25
    #23, #25 -> SkipUntil => #26
    SubscribeSubject FrameEvent => #27
    #26, #27 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject Arducam1Feed

    ExternalizedMapping(Index(DisplayName=Arducam2Index))
    -> Bonsai.Vision.CameraCapture(Index=1, CaptureProperties="")
    -> PublishSubject Arducam2Frame

    SubscribeSubject Arducam2Frame
    -> IsEmpty
    -> BitwiseNot
    -> PublishSubject Arducam2Started

    SubscribeSubject Arducam2Frame => #38
    SubscribeSubject FrameEvent
    -> Take(Count=1) => #40
    #38, #40 -> SkipUntil => #41
    SubscribeSubject FrameEvent => #42
    #41, #42 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject Arducam2Feed

    Disable SubscribeSubject HardwareSchema
    -> Disable MemberSelector(Selector=CameraSettings.SerialNumber)
    -> Disable PropertyMapping(SerialNumber) => #48
    Disable SubscribeSubject HardwareSchema
    -> Disable MemberSelector(Selector=CameraSettings.Exposure)
    -> Disable PropertyMapping(ExposureTime) => #51
    #48, #51 -> Disable Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=23373892, ColorProcessing=Default, ExposureTime=1500, Gain=32, Binning=1)
    -> Disable PublishSubject CameraFrame

    Disable SubscribeSubject CameraFrame
    -> Disable IsEmpty
    -> Disable BitwiseNot
    -> Disable PublishSubject CameraStarted

    Disable SubscribeSubject CameraFrame => #58
    Disable SubscribeSubject FrameEvent
    -> Disable Take(Count=1) => #60
    #58, #60 -> Disable SkipUntil => #61
    Disable SubscribeSubject FrameEvent => #62
    #61, #62 -> Disable Zip
    -> Disable Bonsai.Harp.CreateTimestamped
    -> Disable PublishSubject VideoFeed

    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=CameraSettings1.SerialNumber)
    -> PropertyMapping(SerialNumber) => #68
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=CameraSettings1.Exposure)
    -> PropertyMapping(ExposureTime) => #71
    #68, #71 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=23373890, ColorProcessing=Default, ExposureTime=5000, Gain=0, Binning=1)
    -> PublishSubject Camera1Frame

    SubscribeSubject Camera1Frame
    -> IsEmpty
    -> BitwiseNot
    -> PublishSubject Camera1Started

    SubscribeSubject Camera1Frame => #78
    SubscribeSubject FrameEvent
    -> Take(Count=1) => #80
    #78, #80 -> SkipUntil => #81
    SubscribeSubject FrameEvent => #82
    #81, #82 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject Video1Feed

GroupWorkflow Logging
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=LoggingRootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:\Users\svc_aind_chronic\Documents\data_mouse3, ChunkSize=1)

    SubscribeSubject HardwareSchema => #4
    SubscribeSubject DelphiEvents => #5
    #4, #5 -> SubscribeWhen
    -> Delay(DueTime=PT5S)
    -> IncludeWorkflow DelphiEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Extensions\LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=HardwareSettings)
    -> Take(Count=1)

    SubscribeSubject RuleSettings => #11
    SubscribeSubject DelphiEvents => #12
    #11, #12 -> SubscribeWhen
    -> Delay(DueTime=PT5S)
    -> IncludeWorkflow DelphiEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Extensions\LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=RuleSettings)
    -> Take(Count=1)

    SubscribeSubject PathPrefix
    -> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=BehaviorVideos)
    -> Defer BehaviorVideos
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

        Disable SubscribeSubject VideoFeed => #3
        Disable SubscribeSubject HardwareSchema
        -> Disable MemberSelector(Selector=CameraSettings.FrameRate)
        -> Disable PropertyMapping(FrameRate) => #6
        Disable SubscribeSubject HardwareSchema
        -> Disable MemberSelector(Selector=CameraSettings.FfmpegInput)
        -> Disable PropertyMapping(InputArguments) => #9
        Disable SubscribeSubject HardwareSchema
        -> Disable MemberSelector(Selector=CameraSettings.FfmpegOutput)
        -> Disable PropertyMapping(OutputArguments) => #12
        Disable SubscribeSubject HardwareSchema
        -> Disable MemberSelector(Selector=CameraSettings.CameraName)
        -> Disable PropertyMapping(LogName) => #15
        #3, #6, #9, #12, #15 -> Disable IncludeWorkflow
          Path=Extensions\LogVideo.bonsai
          Heartbeats=""
          ClosingDuration=PT30S
          LogName=PortCamera
          FrameRate=100
          OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_qsv -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune film -preset fast -crf 21 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
          InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"

        SubscribeSubject Video1Feed => #17
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.FrameRate)
        -> PropertyMapping(FrameRate) => #20
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.FfmpegInput)
        -> PropertyMapping(InputArguments) => #23
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.FfmpegOutput)
        -> PropertyMapping(OutputArguments) => #26
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.CameraName)
        -> PropertyMapping(LogName) => #29
        #17, #20, #23, #26, #29 -> GroupWorkflow LogVideo1(Description="Chunks and logs a timestamped video stream into the base data log.")
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name(DisplayName=Heartbeats, Description="The source of heartbeat signals used as a timing signal for closing groups.", Category=GroupClosing))
            -> SubscribeSubject => #2
            SubscribeSubject ChunkSize
            -> PropertyMapping(ChunkSize) => #4
            ExternalizedMapping(ClosingDuration(Category=GroupClosing)) => #5
            #0, #2, #4, #5 -> Aeon.Acquisition.GroupByTime(ChunkSize=1, ClosingDuration=PT30S) => #6
            ExternalizedMapping(Name(DisplayName=LogName, Description="The base name of the video log, without extension."), FrameRate, OutputArguments, InputArguments) => #7
            #6, #7 -> CreateObservable LogVideo
                WorkflowInput Source1
                -> AsyncSubject Data

                SubscribeSubject Data
                -> Merge => #3
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #5
                ExternalizedMapping(Name) => #6
                #5, #6 -> IncludeWorkflow OverheadCamera(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=csv)
                -> PropertyMapping(FileName) => #8
                #3, #8 -> Bonsai.IO.CsvWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\data_mouse3\2026-03-10T00-11-47\behavior-videos\OverheadCamera\OverheadCamera_2026-03-10T00-00-00.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                  Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp"
                -> MemberSelector(Selector=Value.Image) => #10
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #12
                #12, #6 -> IncludeWorkflow OverheadCamera(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=mp4)
                -> PropertyMapping(FileName) => #14
                ExternalizedMapping(FrameRate, OutputArguments, InputArguments) => #15
                #10, #14, #15 -> AllenNeuralDynamics.Core.FfmpegVideoWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\data_mouse3\2026-03-10T00-11-47\behavior-videos\OverheadCamera\OverheadCamera_2026-03-10T00-00-00.mp4
                  Overwrite=false
                  FrameRate=60
                  Verbosity=Verbose
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_qsv -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune film -preset fast -crf 21 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
                -> WorkflowOutput
            -> Switch
            -> WorkflowOutput

        SubscribeSubject Arducam1Feed => #31
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FrameRate)
        -> PropertyMapping(FrameRate) => #34
        #31, #34 -> GroupWorkflow LogArducamVideo(Description="Chunks and logs a timestamped video stream into the base data log.")
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name(DisplayName=Heartbeats, Description="The source of heartbeat signals used as a timing signal for closing groups.", Category=GroupClosing))
            -> SubscribeSubject => #2
            SubscribeSubject ChunkSize
            -> PropertyMapping(ChunkSize) => #4
            ExternalizedMapping(ClosingDuration(Category=GroupClosing)) => #5
            #0, #2, #4, #5 -> Aeon.Acquisition.GroupByTime(ChunkSize=1, ClosingDuration=PT30S) => #6
            ExternalizedMapping(Name(DisplayName=LogName, Description="The base name of the video log, without extension."), FrameRate) => #7
            #6, #7 -> CreateObservable LogVideo
                WorkflowInput Source1
                -> AsyncSubject Data

                SubscribeSubject Data
                -> Merge => #3
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #5
                ExternalizedMapping(Name) => #6
                #5, #6 -> IncludeWorkflow Arducam1(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=csv)
                -> PropertyMapping(FileName) => #8
                #3, #8 -> Bonsai.IO.CsvWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\data_mouse3\2026-03-10T00-11-47\behavior-videos\Arducam1\Arducam1_2026-03-10T00-00-00.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                  Selector=Seconds
                -> MemberSelector(Selector=Value) => #10
                Disable ExternalizedMapping(FrameRate, OutputArguments, InputArguments) => #11
                #10, #11 -> Disable AllenNeuralDynamics.Core.FfmpegVideoWriter => #12
                  FileName=C:\Users\brandon.pratt\Desktop\data\2026-02-20T00-24-27\behavior-videos\Arducam1\Arducam1_2026-02-20T00-00-00.mp4
                  Overwrite=false
                  FrameRate=60
                  Verbosity=Verbose
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_qsv -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune film -preset fast -crf 21 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
                ExternalizedMapping(FrameRate) => #13
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #15
                #15, #6 -> IncludeWorkflow Arducam1(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=avi)
                -> PropertyMapping(FileName) => #17
                #12, #13, #17 -> Bonsai.Vision.VideoWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\data_mouse3\2026-03-10T00-11-47\behavior-videos\Arducam1\Arducam1_2026-03-10T00-00-00.avi
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FourCC=MJPG
                  FrameRate=60
                  FrameSize(Width=1280, Height=800)
                  ResizeInterpolation=NearestNeighbor
                -> WorkflowOutput
            -> Switch
            -> WorkflowOutput

        SubscribeSubject Arducam2Feed => #36
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FrameRate)
        -> PropertyMapping(FrameRate) => #39
        #36, #39 -> GroupWorkflow LogArducamVideo(Description="Chunks and logs a timestamped video stream into the base data log.")
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name(DisplayName=Heartbeats, Description="The source of heartbeat signals used as a timing signal for closing groups.", Category=GroupClosing))
            -> SubscribeSubject => #2
            SubscribeSubject ChunkSize
            -> PropertyMapping(ChunkSize) => #4
            ExternalizedMapping(ClosingDuration(Category=GroupClosing)) => #5
            #0, #2, #4, #5 -> Aeon.Acquisition.GroupByTime(ChunkSize=1, ClosingDuration=PT30S) => #6
            ExternalizedMapping(Name(DisplayName=LogName, Description="The base name of the video log, without extension."), FrameRate) => #7
            #6, #7 -> CreateObservable LogVideo
                WorkflowInput Source1
                -> AsyncSubject Data

                SubscribeSubject Data
                -> Merge => #3
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #5
                ExternalizedMapping(Name) => #6
                #5, #6 -> IncludeWorkflow Arducam2(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=csv)
                -> PropertyMapping(FileName) => #8
                #3, #8 -> Bonsai.IO.CsvWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\data_mouse3\2026-03-10T00-11-47\behavior-videos\Arducam2\Arducam2_2026-03-10T00-00-00.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                  Selector=Seconds
                -> MemberSelector(Selector=Value) => #10
                Disable ExternalizedMapping(FrameRate, OutputArguments, InputArguments) => #11
                #10, #11 -> Disable AllenNeuralDynamics.Core.FfmpegVideoWriter => #12
                  FileName=C:\Users\brandon.pratt\Desktop\data\2026-02-20T00-24-27\behavior-videos\Arducam2\Arducam2_2026-02-20T00-00-00.mp4
                  Overwrite=false
                  FrameRate=60
                  Verbosity=Verbose
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_qsv -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune film -preset fast -crf 21 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
                ExternalizedMapping(FrameRate) => #13
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #15
                #15, #6 -> IncludeWorkflow Arducam2(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=avi)
                -> PropertyMapping(FileName) => #17
                #12, #13, #17 -> Bonsai.Vision.VideoWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\data_mouse3\2026-03-10T00-11-47\behavior-videos\Arducam2\Arducam2_2026-03-10T00-00-00.avi
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FourCC=MJPG
                  FrameRate=60
                  FrameSize(Width=1280, Height=800)
                  ResizeInterpolation=NearestNeighbor
                -> WorkflowOutput
            -> Switch
            -> WorkflowOutput

    SubscribeSubject PathPrefix
    -> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=Behavior)
    -> Defer Behavior
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

        GroupWorkflow HarpLogging
            SubscribeSubject DelphiEvents
            -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpDemux.bonsai, LogName=DelphiController, Heartbeats=DelphiEvents, ClosingDuration=nil)

            GroupWorkflow DelphiControllerPath
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=DelphiController)
                -> Take(Count=1) => #2
                StringProperty(Value=device.yml)
                -> Take(Count=1) => #4
                #0, #2, #4 -> Zip
                -> Format(Format={0}\{1}\{2}, Selector="Item1,Item2,Item3")
                -> WorkflowOutput
            -> PropertyMapping(Path) => #3
            GroupWorkflow HarpDelphiControllerGetMetadata => #4
                StringProperty
                  Value:
                    %YAML 1.1
                    ---
                    # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                    device: DelphiController
                    whoAmI: 1407
                    firmwareVersion: "0.0"
                    hardwareTargets: "1.0"
                    registers:
                        ValveState:
                            address: 32
                            type: U16
                            access: Event
                            description: "Set the enabled/disabled state (enabled = 1) of all valves"
                        ValvesSet:
                            address: 33
                            type: U16
                            maskType: ValveMask
                            access: Write
                            description: "Write a 1 to any bit to enable the corresponding valve."
                        ValvesClear:
                            address: 34
                            type: U16
                            maskType: ValveMask
                            access: Write
                            description: "Write a 1 to any bit to disable the corresponding valve."
                        ValveConfig0: &valveConfig
                            address: 35
                            type: U8
                            length: 12
                            access: Write
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve0."
                        ValveConfig1:
                            <<: *valveConfig
                            address: 36
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve1."
                        ValveConfig2:
                            <<: *valveConfig
                            address: 37
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve2."
                        ValveConfig3:
                            <<: *valveConfig
                            address: 38
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve3."
                        ValveConfig4:
                            <<: *valveConfig
                            address: 39
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve4."
                        ValveConfig5:
                            <<: *valveConfig
                            address: 40
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve5."
                        ValveConfig6:
                            <<: *valveConfig
                            address: 41
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve6."
                        ValveConfig7:
                            <<: *valveConfig
                            address: 42
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve7."
                        ValveConfig8:
                            <<: *valveConfig
                            address: 43
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve8."
                        ValveConfig9:
                            <<: *valveConfig
                            address: 44
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve9."
                        ValveConfig10:
                            <<: *valveConfig
                            address: 45
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve10."
                        ValveConfig11:
                            <<: *valveConfig
                            address: 46
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve11."
                        ValveConfig12:
                            <<: *valveConfig
                            address: 47
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve12."
                        ValveConfig13:
                            <<: *valveConfig
                            address: 48
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve13."
                        ValveConfig14:
                            <<: *valveConfig
                            address: 49
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve14."
                        ValveConfig15:
                            <<: *valveConfig
                            address: 50
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve15."
                        AuxGPIODir:
                            address: 51
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "Specify each auxiliary GPIO pin as an input (0) or output (1)."
                        AuxGPIOState:
                            address: 52
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "Set the state (on or off) of any auxiliary GPIO pins specified as outputs."
                        AuxGPIOSet:
                            address: 53
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "When writing a 1 to any bit, turn on the specified auxiliary GPIO pins specified as outputs."
                        AuxGPIOClear:
                            address: 54
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "When writing a 1 to any bit, Turn off the specified auxiliary GPIO pins specified as outputs."
                        AuxGPIOInputRiseEvent:
                            address: 55
                            type: U8
                            maskType: AuxGPIOMask
                            access: Event
                            description: ""
                        AuxGPIOInputFallEvent:
                            address: 56
                            type: U8
                            maskType: AuxGPIOMask
                            access: Event
                            description: ""
                        AuxGPIORisingInputs:
                            address: 57
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: ""
                        AuxGPIOFallingInputs:
                            address: 58
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: ""
                        PokePin:
                            address: 59
                            type: U8
                            access: Write
                            description: "which poke ports are active."
                        PokePinInverted:
                            address: 60
                            type: U8
                            access: Write
                            description: "Which poke ports are inverted (i.e: transition from HIGH to LOW when a poke occurs)."
                        PokeState:
                            address: 61
                            type: U8
                            access: Event
                            description: "The state of the poke port. An event will be triggered given a poke/ beam break that is greater than the min poke time."
                        RawPokeState:
                            address: 62
                            type: U8
                            access: Event
                            description: "The raw state of the poke pin. Events will be triggered at the onset of a beam break (1) and offset (0)."
                        PokeDometer:
                            address: 63
                            type: U32
                            access: Read
                            description: "number of mouse pokes per port since boot or reset."
                        FSMState:
                            address: 64
                            type: U8
                            access: Write
                            description: "Enable (1) (aka reset) or Disable (0) the poke handling state machine. Note that QueuedOdorIndex must be specified first. Disabling and then enabling a previously-enabled FSM will reset it to its starting state."
                        ForceFSM:
                            address: 65
                            type: U8
                            access: Write
                            description: "Force the poke handling state machine to iterate as if handling a mouse poke. PokeDometers are not incremented."
                        QueuedOdorMask:
                            address: 66
                            type: U16
                            access: Event
                            description: "Queued odors (value: odor valve mask) that will be delivered to the odor port given a register poke. After odors have been dispensed, the register will be set to 0, which indicates that new odors are needed"
                        VacuumCloseTimeUS:
                            address: 67
                            type: U32
                            access: Write
                            description: "Time alotted (in microseconds) for the vacuum valve to close."
                        MinOdorDeliveryTimeUS:
                            address: 68
                            type: U32
                            access: Write
                            description: "Minimum time alotted (in microseconds) for the odor delivery state."
                        MaxOdorDeliveryTimeUS:
                            address: 69
                            type: U32
                            access: Write
                            description: "Maximum time alotted (in microseconds) for the odor delivery state."
                        OdorTransitionTimeUS:
                            address: 70
                            type: U32
                            access: Write
                            description: "Time alotted (in microseconds) before the vacuum turns on to remove the current odor."
                        VacuumSetupTimeUS:
                            address: 71
                            type: U32
                            access: Write
                            description: "Time alotted (in microseconds) for the vacuum to open."
                        FinalValveEnergizedTimeUS:
                            address: 72
                            type: U32
                            access: Write
                            description: "Time alotted (in microseconds) for the final valve to open and remain on."
                        MinimumPokeTimeUS:
                            address: 73
                            type: U32
                            access: Write
                            description: "Minimum time (in microseconds) necessary for a mouse poke port beam to be broken before being interpretted as a poke."
                        CamPin:
                            address: 74
                            type: U8
                            access: Write
                            description: "The GPIO output pin used for camera triggering. Default pin is 26."
                        CamPinState:
                            address: 75
                            type: U8
                            access: Event
                            description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
                        FrameRate:
                            address: 76
                            type: U32
                            access: Write
                            description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
                        DutyCycle:
                            address: 77
                            type: Float
                            access: Write
                            description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
                        EnableCamTrigger:
                            address: 78
                            type: U8
                            access: Write
                            description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
                        EnableValveLeds:
                            address: 79
                            type: U8
                            access: Write
                            description: "Enable (1) and disable (0) valve LEDs."

                    groupMasks:
                        ValveMask:
                            description: "Valve that can be configured/enabled/disabled"
                            values:
                                Valve0: 0x0
                                Valve1: 0x1
                                Valve2: 0x2
                                Valve3: 0x3
                                Valve4: 0x4
                                Valve5: 0x5
                                Valve6: 0x6
                                Valve7: 0x7
                                Valve8: 0x8
                                Valve9: 0x9
                                Valve10: 0xA
                                Valve11: 0xB
                                Valve12: 0xC
                                Valve13: 0xD
                                Valve14: 0xE
                                Valve15: 0xF
                                AllValves: 0xFFFF
                        AuxGPIOMask:
                            description: "Auxiliary GPIO index."
                            values:
                                AuxGPIO0: 0x01
                                AuxGPIO1: 0x02
                                AuxGPIO2: 0x04
                                AuxGPIO3: 0x08
                                AuxGPIO4: 0x10
                                AuxGPIO5: 0x20
                                AuxGPIO6: 0x40
                                AuxGPIO7: 0x80
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #4 -> Bonsai.IO.WriteAllText(Path=C:\Users\svc_aind_chronic\Documents\data_mouse3\2026-03-10T00-11-47\behavior\DelphiController\device.yml, Overwrite=false, Append=false)

    Timer(DueTime=PT10S, Period=PT1H)
    -> Unit
    -> MulticastSubject StartRobocopy

    BehaviorSubject<System.Reactive.Unit> StartRobocopy
    -> SelectMany Robocopy
        WorkflowInput Source1

        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=LoggingRootPath) => #2
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=RemoteTransferRootPath) => #4
        #2, #4 -> Zip
        -> Format(Format="python\robocopy.py {0} {1}", Selector="Item1,Item2")
        -> PropertyMapping(Arguments)
        -> Bonsai.IO.StartProcess
          FileName=..\.venv\Scripts\python.exe
          Arguments="python\robocopy.py C:\Users\svc_aind_chronic\Documents\data_mouse3 \\Allen\aind\stage\chronic\Delphi\2026-02-24\data_mouse3"
        -> Take(Count=1)
        -> WorkflowOutput

Disable ExternalizedMapping(Filter(DisplayName=StartCamerasKey))
-> Disable Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
-> Unit
-> MulticastSubject StartCamera

ExternalizedMapping(Filter(DisplayName=StopCamerasKey))
-> Bonsai.Windows.Input.KeyDown(Filter="LButton A Alt", SuppressRepetitions=false)
-> Unit
-> MulticastSubject StopCamera

SubscribeSubject DelphiEvents
-> Take(Count=1)
-> Bonsai.Harp.SynchronizeTimestamp
-> MulticastSubject DelphiCommands

SubscribeSubject DelphiEvents
-> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.QueuedOdorMask)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: it.ToString()
-> VisualizerMapping => #21
SubscribeSubject DelphiEvents
-> VisualizerMapping => #23
SubscribeSubject CurrentState
-> VisualizerMapping => #25
SubscribeSubject PokeCount
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: it.ToString()
-> Format(Format="Poke Count: {0}", Selector=it)
-> VisualizerMapping => #29
SubscribeSubject Arducam1Feed
-> MemberSelector(Selector=Value)
-> VisualizerMapping => #32
SubscribeSubject Arducam2Feed
-> MemberSelector(Selector=Value)
-> VisualizerMapping => #35
Disable SubscribeSubject VideoFeed
-> Disable MemberSelector(Selector=Value.Image)
-> Disable VisualizerMapping => #38
SubscribeSubject Video1Feed
-> MemberSelector(Selector=Value.Image)
-> VisualizerMapping => #41
#21, #23, #25, #29, #32, #35, #38, #41 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
  ColumnCount=4
  RowCount=2
  ColumnStyles=""
  RowStyles=""
  CellSpans
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=2, RowSpan=1)
