WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(HardwareSettings, RuleSettings, NextRuleSettings, SwitchDateTime)
-> GroupWorkflow InitializeSettings
    ExternalizedMapping(Path(DisplayName=HardwareSettings))
    -> Bonsai.IO.ReadAllText(Path=schemas\hardware-schema.0.6.0.yml)
    -> HardwareSchema.DeserializeFromYaml(Type=TypeMapping<HardwareSchema.HardwareSchema>)
    -> Take(Count=1)
    -> AsyncSubject HardwareSchema

    ExternalizedMapping(Path(DisplayName=RuleSettings))
    -> RuleSelector(Path=C:\Users\svc_aind_chronic\Documents\code\Delphi\src\schemas\rule-3.yml) => #6
    ExternalizedMapping(Path(DisplayName=NextRuleSettings))
    -> RuleSelector(Path=C:\Users\svc_aind_chronic\Documents\code\Delphi\src\schemas\rule-3.yml) => #8
    ExternalizedMapping(DueTimes(DisplayName=SwitchDateTime))
    -> RuleTimer(DueTimes(RuleSchedule(DueTime=2026-01-30T11:50:00, RuleSchema=schemas\rule-5.yml))) => #10
    #8, #10 -> Sample => #11
    #6, #11 -> Merge
    -> RuleSchema.DeserializeFromYaml(Type=TypeMapping<RuleSchema.RuleSchema>)
    -> BehaviorSubject RuleSettings

    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=DelphiController)
    -> AsyncSubject ControllerSettings

    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=FirmwareVersion)
    -> AsyncSubject ExpectedFirmwareVersion

    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,RuleSchema.StateDefinition)> StateDictionary
    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,RuleSchema.StateDefinition)> TransitionState

    SubscribeSubject RuleSettings
    -> SelectMany GenerateStateDictionary
        WorkflowInput Source1

        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=Rule.StateDefinitions)
        -> Merge => #3
        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=Rule.StateDefinitions.Count)
        -> PropertyMapping(Count) => #6
        #3, #6 -> Take(Count=2)
        -> ToDictionary(KeySelector=Name, ElementSelector=it)
        -> WorkflowOutput
    -> MulticastSubject StateDictionary
    -> MulticastSubject TransitionState

GroupWorkflow DelphiController
    BehaviorSubject<Bonsai.Harp.HarpMessage> DelphiCommands
    -> Delay(DueTime=PT0.1S) => #1
    ExternalizedMapping(Name(DisplayName=ControllerSettings))
    -> SubscribeSubject ControllerSettings
    -> MemberSelector(Selector=ComPort)
    -> PropertyMapping(PortName) => #5
    #1, #5 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM8)
    -> PublishSubject DelphiEvents

    Unit
    -> GroupWorkflow DisableCameraTriggers
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCam0TriggerPayload(EnableCam0Trigger=0))
        -> MulticastSubject DelphiCommands
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCam1TriggerPayload(EnableCam1Trigger=0))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow DisableFSM
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=0))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow EnableValveLeds
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableValveLedsPayload(EnableValveLeds=1))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetMinimumPokeTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=MinPokeTimeUs)
        -> PropertyMapping(MinimumPokeTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinimumPokeTimeUSPayload(MinimumPokeTimeUS=10000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetMinimumOdorDeliveryTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=MinOdorDeliveryTimeUs)
        -> PropertyMapping(MinOdorDeliveryTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinOdorDeliveryTimeUSPayload(MinOdorDeliveryTimeUS=10000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetMaxOdorDeliveryTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=MaxOdorDeliveryTimeUs)
        -> PropertyMapping(MaxOdorDeliveryTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMaxOdorDeliveryTimeUSPayload(MaxOdorDeliveryTimeUS=10000000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetFinalValveEnergizedTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=FinalValveEnergizedTimeUs)
        -> PropertyMapping(FinalValveEnergizedTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFinalValveEnergizedTimeUSPayload(FinalValveEnergizedTimeUS=110000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetVacuumSetupTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=VacuumSetupTimeUs)
        -> PropertyMapping(VacuumSetupTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumSetupTimeUSPayload(VacuumSetupTimeUS=20000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetVacuumCloseTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=VacuumCloseTimeUs)
        -> PropertyMapping(VacuumCloseTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateVacuumCloseTimeUSPayload(VacuumCloseTimeUS=20000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetOdorTransitionTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=OdorTransitionTimeUs)
        -> PropertyMapping(OdorTransitionTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateOdorTransitionTimeUSPayload(OdorTransitionTimeUS=30000))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetPokePin
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=PokePin)
        -> PropertyMapping(PokePin) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreatePokePinPayload(PokePin=22))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetOdorDwellTime
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=OdorDwellTimeUs)
        -> PropertyMapping(OdorDwellTimeUS) => #4
        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateOdorDwellTimeUSPayload(OdorDwellTimeUS=0))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> GroupWorkflow SetPokePinInverted
        WorkflowInput Source1
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreatePokePinInvertedPayload(PokePinInverted=1))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput
    -> Unit
    -> Take(Count=1)
    -> AsyncSubject ControllerReady

    ExternalizedMapping(Name(DisplayName=InitiateFSM))
    -> BehaviorSubject<System.Reactive.Unit> InitiateFSM
    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=1))
    -> MulticastSubject DelphiCommands

    ExternalizedMapping(Name(DisplayName=QueueOdor))
    -> BehaviorSubject<System.Int32> QueueOdor => #30
    -> Disable InputMapping(QueuedOdorIndex(Selector=it)) => #31
    #30 -> PropertyMapping(QueuedOdorMask) => #32
    Source1=#31, Source1=#32, Source2=#32 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateQueuedOdorMaskPayload(QueuedOdorMask=1))
    -> MulticastSubject DelphiCommands

    SubscribeSubject DelphiEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> AllenNeuralDynamics.DelphiController.FilterRegister(FilterType=Include, Register=AllenNeuralDynamics.DelphiController.PokeState)
    -> IntProperty(Value=1)
    -> Accumulate
    -> BehaviorSubject PokeCount

    Timer(DueTime=PT0S, Period=PT0.1S)
    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Read, Payload=AllenNeuralDynamics.DelphiController.CreateFirmwareVersionPayload(Major=0, Minor=6, Patch=0))
    -> Take(Count=1)
    -> MulticastSubject DelphiCommands

    SubscribeSubject DelphiEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Read)
    -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.FirmwareVersion)
    -> Condition FirmwareCheck
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Major) => #1
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=FirmwareVersion.ExpectedMajor)
        -> PropertyMapping(Value) => #4
        #1, #4 -> NotEqual(Operand=FloatProperty(Value=0)) => #5
        #0 -> MemberSelector(Selector=Minor) => #6
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=FirmwareVersion.ExpectedMinor)
        -> PropertyMapping(Value) => #9
        #6, #9 -> NotEqual(Operand=FloatProperty(Value=6)) => #10
        #0 -> MemberSelector(Selector=Patch) => #11
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=FirmwareVersion.ExpectedPatch)
        -> PropertyMapping(Value) => #14
        #11, #14 -> NotEqual(Operand=FloatProperty(Value=0)) => #15
        #5, #10, #15 -> Merge
        -> Condition SemanticVersionCheck
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Firmware version mismatch!")

GroupWorkflow StateController
    BehaviorSubject<System.String> CurrentState

    SubscribeSubject ControllerReady => #1
    SubscribeSubject StateDictionary => #2
    #1, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Index(Operand=StringProperty(Value=DefaultState))
    -> MemberSelector(Selector=OdorIndex)
    -> MulticastSubject QueueOdor
    -> Delay(DueTime=PT1S)
    -> Unit
    -> MulticastSubject InitiateFSM
    -> StringProperty(Value=DefaultState)
    -> MulticastSubject BeginState
    -> Take(Count=1)

    BehaviorSubject<System.String> BeginState => #14
    -> SelectMany SelectState
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject StateName
        -> MulticastSubject CurrentState

        SubscribeSubject StateDictionary => #4
        SubscribeSubject StateName
        -> PropertyMapping(Key) => #6
        #4, #6 -> TryLookupOrDefault(DefaultState=DefaultState, Key=OdorA)
        -> MemberSelector(Selector=OdorIndex)
        -> MulticastSubject QueueOdor

        SubscribeSubject DelphiEvents
        -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.QueuedOdorMask)
        -> Condition OdorConsumed
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<System.SByte>(Value=0))
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject StateComplete

        SubscribeSubject StateName
        -> Condition Default
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=DefaultState))
            -> WorkflowOutput
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateForceFSMPayload(ForceFSM=1))
        -> MulticastSubject DelphiCommands

        SubscribeSubject StateComplete => #19
        SubscribeSubject TransitionState => #20
        SubscribeSubject StateComplete => #21
        #20, #21 -> SubscribeWhen => #22
        SubscribeSubject StateName
        -> PropertyMapping(Key) => #24
        #22, #24 -> TryLookupOrDefault(DefaultState=DefaultState, Key=OdorA)
        -> MemberSelector(Selector=TransitionsTo) => #26
        #19, #26 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it.Item1 as CurrentState, it.Item2 as TransitionState)
        -> Take(Count=1)
        -> WorkflowOutput
    -> MemberSelector(Selector=TransitionState)
    -> UniformSampleStateProbabilities => #17
    -> Condition SampleWithoutReplacement => #18
        WorkflowInput Source1 => #0
        SubscribeSubject RuleSettings => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Rule.SampleWithReplacement)
        -> BitwiseNot
        -> WorkflowOutput
    #18, #14 -> WithLatestFrom => #19
    SubscribeSubject StateDictionary => #20
    SubscribeSubject TransitionState => #21
    #20, #21 -> CombineLatest => #22
    #19, #22 -> WithLatestFrom
    -> UpdateTransitionState
    -> MulticastSubject TransitionState => #25
    #25, #19 -> Zip
    -> MemberSelector(Selector=Item2.Item1) => #27
    #17 -> Condition SampleWithReplacement => #28
        WorkflowInput Source1 => #0
        SubscribeSubject RuleSettings => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Rule.SampleWithReplacement)
        -> WorkflowOutput
    #27, #28 -> Merge
    -> MulticastSubject BeginState

GroupWorkflow CameraController
    GroupWorkflow CameraController
        BehaviorSubject<System.Reactive.Unit> StartCamera => #0
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FrameRate)
        -> PropertyMapping(Cam0FrameRate) => #3
        #0, #3 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateCam0FrameRatePayload(Cam0FrameRate=60))
        -> MulticastSubject DelphiCommands => #5
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.DutyCycle)
        -> PropertyMapping(Cam0DutyCycle) => #8
        #5, #8 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateCam0DutyCyclePayload(Cam0DutyCycle=0.5))
        -> MulticastSubject DelphiCommands
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCam0TriggerPayload(EnableCam0Trigger=1))
        -> MulticastSubject DelphiCommands

        BehaviorSubject<System.Reactive.Unit> StopCamera
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCam0TriggerPayload(EnableCam0Trigger=0))
        -> MulticastSubject DelphiCommands

    SubscribeSubject DelphiEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.TimestampedCam0PinState) => #3
    SubscribeSubject CameraStarted => #4
    #3, #4 -> SkipUntil
    -> MemberSelector(Selector=Seconds)
    -> PublishSubject FrameEvent

    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=CameraSettings.SerialNumber)
    -> PropertyMapping(SerialNumber) => #10
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=CameraSettings.Exposure)
    -> PropertyMapping(ExposureTime) => #13
    #10, #13 -> AllenNeuralDynamics.Core.AindSpinnakerCapture
      Index=nil
      SerialNumber=26294532
      ColorProcessing=Default
      ExposureTime=2500
      Gain=10
      Binning=1
      Gamma=nil
      PixelFormat=Mono8
      RegionOfInterest(X=0, Y=0, Width=0, Height=0)
      AdcBitDepth=nil
    -> PublishSubject CameraFrame

    SubscribeSubject CameraFrame
    -> IsEmpty
    -> BitwiseNot
    -> PublishSubject CameraStarted

    SubscribeSubject CameraFrame => #20
    SubscribeSubject FrameEvent => #21
    #20, #21 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject VideoFeed

GroupWorkflow Logging
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=LoggingRootPath) => #1
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=SubjectId) => #3
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=SessionTime) => #5
    #1, #3, #5 -> Zip
    -> Format(Format={0}/{1}/{2}, Selector="Item1,Item2,Item3")
    -> Take(Count=1)
    -> BehaviorSubject SessionPath
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:/Users/svc_aind_chronic/Documents/data/test_data/local/801055/2024-06-01_12-00-00, ChunkSize=1)

    SubscribeSubject HardwareSchema => #12
    SubscribeSubject DelphiEvents => #13
    #12, #13 -> SubscribeWhen
    -> IncludeWorkflow DelphiEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Extensions\LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=HardwareSettings)
    -> Take(Count=1)

    SubscribeSubject RuleSettings => #18
    SubscribeSubject DelphiEvents => #19
    #18, #19 -> SubscribeWhen
    -> IncludeWorkflow DelphiEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Extensions\LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=RuleSettings)

    SubscribeSubject PathPrefix
    -> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=BehaviorVideos)
    -> Defer BehaviorVideos
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

        SubscribeSubject VideoFeed => #3
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FrameRate)
        -> PropertyMapping(FrameRate) => #6
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FfmpegInput)
        -> PropertyMapping(InputArguments) => #9
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FfmpegOutput)
        -> PropertyMapping(OutputArguments) => #12
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.CameraName)
        -> PropertyMapping(LogName) => #15
        #3, #6, #9, #12, #15 -> IncludeWorkflow
          Path=Extensions\LogVideo.bonsai
          Heartbeats=""
          ClosingDuration=PT30S
          LogName=OverheadCamera
          FrameRate=60
          OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v libx264 -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune film -preset fast -crf 21 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
          InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"

    SubscribeSubject PathPrefix
    -> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=Behavior)
    -> Defer Behavior
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

        GroupWorkflow HarpLogging
            SubscribeSubject DelphiEvents
            -> GroupWorkflow LogHarpDemux(Description="Chunks and logs a timestamped harp data stream into the base data log, splitting each independent register into a separate file.")
                WorkflowInput Source1
                -> GroupBy(KeySelector=Address, ElementSelector="") => #1
                ExternalizedMapping(LogName, Heartbeats, ClosingDuration) => #2
                #1, #2 -> SelectMany LogRegisters
                    WorkflowInput Source1
                    -> AsyncSubject Register

                    ExternalizedMapping(Value(DisplayName=LogName))
                    -> StringProperty(Value=DelphiController)
                    -> Take(Count=1) => #4
                    SubscribeSubject Register
                    -> MemberSelector(Selector=Key) => #6
                    #4, #6 -> Zip
                    -> Format(Format={0}_{1}, Selector="Item1,Item2")
                    -> AsyncSubject LogName

                    SubscribeSubject Register
                    -> Merge => #11
                    ExternalizedMapping(Name(DisplayName=Heartbeats, Description="The source of heartbeat signals used as a timing signal for closing groups.", Category=GroupClosing))
                    -> SubscribeSubject DelphiEvents => #13
                    SubscribeSubject ChunkSize
                    -> PropertyMapping(ChunkSize) => #15
                    ExternalizedMapping(ClosingDuration(Category=GroupClosing)) => #16
                    #11, #13, #15, #16 -> Aeon.Acquisition.GroupByTime(ChunkSize=1, ClosingDuration=PT2S)
                    -> CreateObservable LogHarp
                        WorkflowInput Source1
                        -> AsyncSubject Data

                        SubscribeSubject Data
                        -> Merge
                        -> MemberSelector(Selector=MessageBytes) => #4
                        SubscribeSubject Data
                        -> MemberSelector(Selector=Key) => #6
                        SubscribeSubject LogName
                        -> PropertyMapping(Name) => #8
                        #6, #8 -> IncludeWorkflow DelphiController_8(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=bin)
                        -> PropertyMapping(Path) => #10
                        #4, #10 -> Bonsai.Dsp.MatrixWriter
                          Path: C:/Users/svc_aind_chronic/Documents/data/test_data/local/801055/2024-06-01_12-00-00\2026-09-04T20-05-53\behavior\DelphiController\DelphiController_8_2026-09-04T23-00-00.bin
                          Suffix=None
                          Overwrite=false
                          Layout=ColumnMajor
                        -> WorkflowOutput
                    -> Switch
                    -> WorkflowOutput
                -> WorkflowOutput

            GroupWorkflow DelphiControllerPath
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=DelphiController)
                -> Take(Count=1) => #2
                StringProperty(Value=device.yml)
                -> Take(Count=1) => #4
                #0, #2, #4 -> Zip
                -> Format(Format={0}\{1}\{2}, Selector="Item1,Item2,Item3")
                -> WorkflowOutput
            -> PropertyMapping(Path) => #3
            GroupWorkflow HarpDelphiControllerGetMetadata => #4
                StringProperty
                  Value:
                    %YAML 1.1
                    ---
                    # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                    device: DelphiController
                    whoAmI: 1409
                    firmwareVersion: "0.6"
                    hardwareTargets: "1.0"
                    registers:
                        ValveState:
                            address: 32
                            type: U16
                            access: Event
                            description: "Set the enabled/disabled state (enabled = 1) of all valves"
                        ValvesSet:
                            address: 33
                            type: U16
                            maskType: ValveMask
                            access: Write
                            description: "Write a 1 to any bit to enable the corresponding valve."
                        ValvesClear:
                            address: 34
                            type: U16
                            maskType: ValveMask
                            access: Write
                            description: "Write a 1 to any bit to disable the corresponding valve."
                        ValveConfig0: &valveConfig
                            address: 35
                            type: U8
                            length: 12
                            access: Write
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve0."
                        ValveConfig1:
                            <<: *valveConfig
                            address: 36
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve1."
                        ValveConfig2:
                            <<: *valveConfig
                            address: 37
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve2."
                        ValveConfig3:
                            <<: *valveConfig
                            address: 38
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve3."
                        ValveConfig4:
                            <<: *valveConfig
                            address: 39
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve4."
                        ValveConfig5:
                            <<: *valveConfig
                            address: 40
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve5."
                        ValveConfig6:
                            <<: *valveConfig
                            address: 41
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve6."
                        ValveConfig7:
                            <<: *valveConfig
                            address: 42
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve7."
                        ValveConfig8:
                            <<: *valveConfig
                            address: 43
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve8."
                        ValveConfig9:
                            <<: *valveConfig
                            address: 44
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve9."
                        ValveConfig10:
                            <<: *valveConfig
                            address: 45
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve10."
                        ValveConfig11:
                            <<: *valveConfig
                            address: 46
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve11."
                        ValveConfig12:
                            <<: *valveConfig
                            address: 47
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve12."
                        ValveConfig13:
                            <<: *valveConfig
                            address: 48
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve13."
                        ValveConfig14:
                            <<: *valveConfig
                            address: 49
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve14."
                        ValveConfig15:
                            <<: *valveConfig
                            address: 50
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve15."
                        AuxGPIODir:
                            address: 51
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "Specify each auxiliary GPIO pin as an input (0) or output (1)."
                        AuxGPIOState:
                            address: 52
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "Set the state (on or off) of any auxiliary GPIO pins specified as outputs."
                        AuxGPIOSet:
                            address: 53
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "When writing a 1 to any bit, turn on the specified auxiliary GPIO pins specified as outputs."
                        AuxGPIOClear:
                            address: 54
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "When writing a 1 to any bit, Turn off the specified auxiliary GPIO pins specified as outputs."
                        AuxGPIOInputRiseEvent:
                            address: 55
                            type: U8
                            maskType: AuxGPIOMask
                            access: Event
                            description: ""
                        AuxGPIOInputFallEvent:
                            address: 56
                            type: U8
                            maskType: AuxGPIOMask
                            access: Event
                            description: ""
                        AuxGPIORisingInputs:
                            address: 57
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: ""
                        AuxGPIOFallingInputs:
                            address: 58
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: ""
                        PokePin:
                            address: 59
                            type: U8
                            access: Write
                            description: "which poke ports are active."
                        PokePinInverted:
                            address: 60
                            type: U8
                            access: Write
                            description: "Which poke ports are inverted (i.e: transition from HIGH to LOW when a poke occurs)."
                        PokeState:
                            address: 61
                            type: U8
                            access: Event
                            description: "The state of the poke port. An event will be triggered given a poke/ beam break that is greater than the min poke time."
                        RawPokeState:
                            address: 62
                            type: U8
                            access: Event
                            description: "The raw state of the poke pin. Events will be triggered at the onset of a beam break (1) and offset (0)."
                        PokeDometer:
                            address: 63
                            type: U32
                            access: Read
                            description: "number of mouse pokes per port since boot or reset."
                        FSMState:
                            address: 64
                            type: U8
                            access: Write
                            description: "Enable (1) (aka reset) or Disable (0) the poke handling state machine. Note that QueuedOdorIndex must be specified first. Disabling and then enabling a previously-enabled FSM will reset it to its starting state."
                        ForceFSM:
                            address: 65
                            type: U8
                            access: Write
                            description: "Force the poke handling state machine to iterate as if handling a mouse poke. PokeDometers are not incremented."
                        QueuedOdorMask:
                            address: 66
                            type: U16
                            access: Event
                            description: "Queued odors (value: odor valve mask) that will be delivered to the odor port given a register poke. After odors have been dispensed, the register will be set to 0, which indicates that new odors are needed"
                        VacuumCloseTimeUS:
                            address: 67
                            type: U32
                            access: Write
                            description: "Time alotted (in microseconds) for the vacuum valve to close."
                        MinOdorDeliveryTimeUS:
                            address: 68
                            type: U32
                            access: Write
                            description: "Minimum time alotted (in microseconds) for the odor delivery state."
                        MaxOdorDeliveryTimeUS:
                            address: 69
                            type: U32
                            access: Write
                            description: "Maximum time alotted (in microseconds) for the odor delivery state."
                        OdorTransitionTimeUS:
                            address: 70
                            type: U32
                            access: Write
                            description: "Time alotted (in microseconds) before the vacuum turns on to remove the current odor."
                        VacuumSetupTimeUS:
                            address: 71
                            type: U32
                            access: Write
                            description: "Time alotted (in microseconds) for the vacuum to open."
                        FinalValveEnergizedTimeUS:
                            address: 72
                            type: U32
                            access: Write
                            description: "Time alotted (in microseconds) for the final valve to open and remain on."
                        MinimumPokeTimeUS:
                            address: 73
                            type: U32
                            access: Write
                            description: "Minimum time (in microseconds) necessary for a mouse poke port beam to be broken before being interpretted as a poke."
                        OdorDwellTimeUS:
                            address: 74
                            type: U32
                            access: Write
                            description: "Time (in microseconds) that the odor is allowed to dwell before transitioning, contingent on additional pokes."
                        Cam0PinState:
                            address: 75
                            type: U8
                            access: Event
                            description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
                        Cam0FrameRate:
                            address: 76
                            type: U32
                            access: Write
                            description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
                        Cam0DutyCycle:
                            address: 77
                            type: Float
                            access: Write
                            description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
                        EnableCam0Trigger:
                            address: 78
                            type: U8
                            access: Write
                            description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
                        Cam1PinState:
                            address: 79
                            type: U8
                            access: Event
                            description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
                        Cam1FrameRate:
                            address: 80
                            type: U32
                            access: Write
                            description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
                        Cam1DutyCycle:
                            address: 81
                            type: Float
                            access: Write
                            description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
                        EnableCam1Trigger:
                            address: 82
                            type: U8
                            access: Write
                            description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
                        EnableValveLeds:
                            address: 83
                            type: U8
                            access: Write
                            description: "Enable (1) and disable (0) valve LEDs."
                        FirmwareVersion:
                            address: 84
                            type: Float
                            length: 3
                            access: Read
                            description: "Firmware version of the device."
                            payloadSpec:
                                major:
                                    offset: 0
                                    description: "Major version."
                                minor:
                                    offset: 1
                                    description: "Minor version."
                                patch:
                                    offset: 2
                                    description: "Patch version."
                    groupMasks:
                        ValveMask:
                            description: "Valve that can be configured/enabled/disabled"
                            values:
                                Valve0: 0x0
                                Valve1: 0x1
                                Valve2: 0x2
                                Valve3: 0x3
                                Valve4: 0x4
                                Valve5: 0x5
                                Valve6: 0x6
                                Valve7: 0x7
                                Valve8: 0x8
                                Valve9: 0x9
                                Valve10: 0xA
                                Valve11: 0xB
                                Valve12: 0xC
                                Valve13: 0xD
                                Valve14: 0xE
                                Valve15: 0xF
                                AllValves: 0xFFFF
                        AuxGPIOMask:
                            description: "Auxiliary GPIO index."
                            values:
                                AuxGPIO0: 0x01
                                AuxGPIO1: 0x02
                                AuxGPIO2: 0x04
                                AuxGPIO3: 0x08
                                AuxGPIO4: 0x10
                                AuxGPIO5: 0x20
                                AuxGPIO6: 0x40
                                AuxGPIO7: 0x80
                -> Take(Count=1)
                -> WorkflowOutput
            #3, #4 -> Bonsai.IO.WriteAllText
              Path=C:/Users/svc_aind_chronic/Documents/data/test_data/local/801055/2024-06-01_12-00-00\2026-09-04T20-05-53\behavior\DelphiController\device.yml
              Overwrite=false
              Append=false

            SubscribeSubject DelphiEvents
            -> Take(Count=1)
            -> Delay(DueTime=PT10S)
            -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> MulticastSubject DelphiCommands

    Timer(DueTime=PT1H5M, Period=PT1M)
    -> Unit
    -> MulticastSubject StartRobocopy

    BehaviorSubject<System.Reactive.Unit> StartRobocopy
    -> SelectMany Robocopy
        WorkflowInput Source1

        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=RobocopyScriptPath) => #2
        SubscribeSubject SessionPath => #3
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=RemoteTransferRootPath) => #5
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=SubjectId) => #7
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=SessionTime) => #9
        #5, #7, #9 -> Zip
        -> Format(Format={0}/{1}/{2}, Selector="Item1,Item2,Item3") => #11
        #2, #3, #11 -> Zip
        -> Format(Format="{0} {1} {2}", Selector="Item1,Item2,Item3")
        -> PropertyMapping(Arguments(Selector=it))
        -> Bonsai.IO.StartProcess
          FileName=..\.venv\Scripts\python.exe
          Arguments: C:/Users/svc_aind_chronic/Documents/code/Delphi/src/python/robocopy.py C:/Users/svc_aind_chronic/Documents/data/test_data/local/801055/2024-06-01_12-00-00 //allen/aind/stage/chronic/data/801055/2024-06-01_12-00-00
        -> Take(Count=1)
        -> WorkflowOutput

ExternalizedMapping(Filter(DisplayName=StartCamerasKey))
-> Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
-> Unit
-> MulticastSubject StartCamera

ExternalizedMapping(Filter(DisplayName=StopCamerasKey))
-> Bonsai.Windows.Input.KeyDown(Filter="LButton A Alt", SuppressRepetitions=false)
-> Unit
-> MulticastSubject StopCamera

SubscribeSubject DelphiEvents
-> Take(Count=1)
-> Bonsai.Harp.SynchronizeTimestamp
-> MulticastSubject DelphiCommands

SubscribeSubject DelphiEvents
-> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.QueuedOdorMask)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: it.ToString()
-> VisualizerMapping => #21
SubscribeSubject DelphiEvents
-> VisualizerMapping => #23
SubscribeSubject CurrentState
-> VisualizerMapping => #25
SubscribeSubject PokeCount
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: it.ToString()
-> Format(Format="Poke Count: {0}", Selector=it)
-> VisualizerMapping => #29
SubscribeSubject VideoFeed
-> MemberSelector(Selector=Value.Image)
-> VisualizerMapping => #32
#21, #23, #25, #29, #32 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
  ColumnCount=4
  RowCount=2
  ColumnStyles=""
  RowStyles=""
  CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
