WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(SessionSettingsPath(Category=SessionSettings), RuleSettingsPath(Category=SessionSettings))
-> GroupWorkflow InitializeSettings
    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,System.Collections.Generic.List(System.String))> TransitionLookup
    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,System.Collections.Generic.List(System.String))> TransitionLookupState
    BehaviorSubject<RuleSchema.DelphiRule> RuleSettings

    ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
    -> LoadSessionSettings(Path=DelphiSession4.yml)
    -> Take(Count=1) => #5
    -> AsyncSubject SessionSettings
    #5 -> Timestamp
    -> MemberSelector(Selector=Timestamp.UtcDateTime)
    -> Aeon.Acquisition.FormatDate
    -> AsyncSubject SessionTimestamp

    ExternalizedMapping(Path(DisplayName=RuleSettingsPath))
    -> RuleSelector(Path=rule11.rule.yml)
    -> MulticastSubject RuleSettings

    SubscribeSubject RuleSettings
    -> SelectMany GenerateTransitionDictionary
        WorkflowInput Source1

        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=StateDefinitions)
        -> Merge => #3
        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=StateDefinitions.Count)
        -> PropertyMapping(Count) => #6
        #3, #6 -> Take(Count=10)
        -> ToDictionary(KeySelector=Name, ElementSelector=TransitionsTo)
        -> WorkflowOutput
    -> MulticastSubject TransitionLookup
    -> MulticastSubject TransitionLookupState

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=LineMappings.OdorMap)
    -> Merge => #20
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=LineMappings.OdorMap.Count)
    -> PropertyMapping(Count) => #23
    #20, #23 -> Take(Count=6)
    -> ToDictionary(KeySelector=Name, ElementSelector=Line)
    -> AsyncSubject LineMappings

ExternalizedMapping(StartStateMachineKey(Category=ControlKeys))
-> GroupWorkflow Devices
    GroupWorkflow DelphiController
        Unit
        -> Bonsai.Harp.SynchronizeTimestamp => #1
        Unit
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
        -> DelaySubscription(DueTime=PT1S) => #4
        Unit
        -> Harp.OutputExpander.ConfigurePwm(PwmChannels=Pwm2, Frequency=1000, DutyCycle=10, PulseCount=0, TriggerSource=Software, EventConfig=Enabled) => #6
        -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmAndStimEnablePayload(PwmAndStimEnable=Pwm2ToOut9)) => #7
        -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmStartPayload(PwmStart=Pwm2)) => #8
        #6, #7, #8 -> Merge => #9
        #1, #4, #9 -> Concat
        -> BehaviorSubject Commands

        SubscribeSubject Commands => #12
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=HarpProperties.ComPort)
        -> PropertyMapping(PortName) => #15
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=HarpProperties.ShowHarpLeds)
        -> BooleanToLedState
        -> PropertyMapping(VisualIndicators) => #19
        #12, #15, #19 -> Harp.OutputExpander.Device(OperationMode=Standby, OperationLed=On, DumpRegisters=false, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM6)
        -> PublishSubject Events

        BehaviorSubject<DataSchema.LineCommand> LineCommands
        -> Condition CommandExists => #23
            WorkflowInput Source1
            -> MemberSelector(Selector=LineName) => #1
            SubscribeSubject LineMappings => #2
            #1, #2 -> WithLatestFrom
            -> ContainsKey
            -> WorkflowOutput
        -> SelectMany LineActivation
            WorkflowInput Source1
            -> AsyncSubject Command

            SubscribeSubject LineMappings => #2
            SubscribeSubject Command => #3
            #2, #3 -> WithLatestFrom => #4
            -> MemberSelector(Selector=Item1) => #5
            #4 -> MemberSelector(Selector=Item2.LineName)
            -> PropertyMapping(Value) => #7
            #5, #7 -> Index(Operand=StringProperty(Value=OdorC2))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
              Expression: Math.Pow(2, it)
            #4 -> MemberSelector(Selector=Item2) => #10
            #9, #10 -> Zip => #11
            -> Condition Open
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.State)
                -> WorkflowOutput
            -> InputMapping(OutputSet(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out3)) => #14
            #11 -> Condition Close
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.State)
                -> BitwiseNot
                -> WorkflowOutput
            -> InputMapping(OutputClear(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out8)) => #17
            #14, #17 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Commands
            -> WorkflowOutput
        #23 -> Condition OpenCommand
            WorkflowInput Source1
            -> MemberSelector(Selector=State)
            -> WorkflowOutput
        -> BehaviorSubject LineOnsets

        BehaviorSubject<System.Boolean> CurrentPokeState

        SubscribeSubject Events
        -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.AuxInState) => #29
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=LineMappings.AuxLine)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(Math.Pow(2, it))
        -> PropertyMapping(Value) => #33
        #29, #33 -> HasFlag(Operand=WorkflowProperty<Harp.OutputExpander.AuxiliaryInputs>(Value=Aux0)) => #34
        -> Condition PokeOnset
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject PokeOnset
        -> BooleanProperty(Value=true)
        -> MulticastSubject CurrentPokeState
        #34 -> Condition PokeOffset
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> PublishSubject PokeOffset
        -> BooleanProperty(Value=false)
        -> MulticastSubject CurrentPokeState

        BehaviorSubject<System.Reactive.Unit> CloseAllLines
        -> SelectMany CloseAllLines
            WorkflowInput Source1

            SubscribeSubject LineMappings
            -> MemberSelector(Selector=Keys)
            -> Merge => #3
            SubscribeSubject LineMappings
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Count) => #6
            #3, #6 -> Take(Count=6)
            -> SelectMany CloseCommand
                WorkflowInput Source1
                -> PropertyMapping(LineName)
                -> DataSchema.LineCommand(LineName=OdorC2, State=false)
                -> MulticastSubject LineCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput

        BehaviorSubject<System.Boolean> PortValveCommand
        -> SelectMany PortValveActivation
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.PortLine)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Convert.ToInt32(Math.Pow(2, it))
            WorkflowInput Source1 => #3
            #2, #3 -> Zip => #4
            -> Condition Open
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> InputMapping(OutputSet(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out0)) => #7
            #4 -> Condition Close
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> InputMapping(OutputClear(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out0)) => #10
            #7, #10 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Commands
            -> WorkflowOutput

        SubscribeSubject Events
        -> Harp.OutputExpander.FilterRegister(FilterType=Include, Register=Harp.OutputExpander.PwmRiseEvent)
        -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.TimestampedPwmRiseEvent)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject HardwareClock

        BehaviorSubject<System.Boolean> StimulusDelivered

        BehaviorSubject<System.Boolean> VacuumValveCommand
        -> SelectMany VacuumValveActivation
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.VacuumLine)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Convert.ToInt32(Math.Pow(2, it))
            WorkflowInput Source1 => #3
            #2, #3 -> Zip => #4
            -> Condition Open
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> InputMapping(OutputSet(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out2)) => #7
            #4 -> Condition Close
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> InputMapping(OutputClear(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out2)) => #10
            #7, #10 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Commands
            -> WorkflowOutput

    ExternalizedMapping(StartStateMachineKey)
    -> GroupWorkflow StateController
        BehaviorSubject<System.String> CurrentState

        ExternalizedMapping(Filter(DisplayName=StartStateMachineKey))
        -> Bonsai.Windows.Input.KeyDown(Filter="Space Shift", SuppressRepetitions=false)
        -> StringProperty(Value=DefaultState)
        -> MulticastSubject BeginState
        -> Take(Count=1)

        BehaviorSubject<System.String> BeginState => #6
        -> SelectMany SelectState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StateName
            -> MulticastSubject CurrentState

            SubscribeSubject SubjectDictionary => #4
            SubscribeSubject StateName
            -> PropertyMapping(Value) => #6
            #4, #6 -> Index(Operand=StringProperty(Value=OdorA1))
            -> Merge
            -> Take(Count=1)
            -> AsyncSubject StateComplete

            SubscribeSubject StateName => #11
            SubscribeSubject TransitionLookupState => #12
            SubscribeSubject StateComplete => #13
            #12, #13 -> SubscribeWhen => #14
            SubscribeSubject StateName
            -> PropertyMapping(Key) => #16
            #14, #16 -> TryGetValueOrDefault(Key=OdorA1, DefaultString=DefaultState) => #17
            #11, #17 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1 as CurrentState, it.Item2 as TransitionState)
            -> Take(Count=1)
            -> WorkflowOutput
        -> MemberSelector(Selector=TransitionState)
        -> UniformSampleStateProbabilities => #9
        -> Condition SampleWithoutReplacement => #10
            WorkflowInput Source1 => #0
            SubscribeSubject RuleSettings => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.SampleWithReplacement)
            -> BitwiseNot
            -> WorkflowOutput
        #10, #6 -> WithLatestFrom => #11
        SubscribeSubject TransitionLookup => #12
        SubscribeSubject TransitionLookupState => #13
        #12, #13 -> CombineLatest => #14
        #11, #14 -> WithLatestFrom
        -> UpdateTransitionState
        -> MulticastSubject TransitionLookupState => #17
        #17, #11 -> Zip
        -> MemberSelector(Selector=Item2.Item1) => #19
        #9 -> Condition SampleWithReplacement => #20
            WorkflowInput Source1 => #0
            SubscribeSubject RuleSettings => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.SampleWithReplacement)
            -> WorkflowOutput
        #19, #20 -> Merge
        -> MulticastSubject BeginState

        GroupWorkflow StateDefinitions
            IncludeWorkflow(Path=Extensions\OdorState.bonsai, LineName=OdorA1, StateName=OdorA1)
            -> Take(Count=1) => #1
            IncludeWorkflow(Path=Extensions\OdorState.bonsai, LineName=OdorA2, StateName=OdorA2)
            -> Take(Count=1) => #3
            IncludeWorkflow(Path=Extensions\OdorState.bonsai, LineName=OdorB1, StateName=OdorB1)
            -> Take(Count=1) => #5
            IncludeWorkflow(Path=Extensions\OdorState.bonsai, LineName=OdorB2, StateName=OdorB2)
            -> Take(Count=1) => #7
            IncludeWorkflow(Path=Extensions\OdorState.bonsai, LineName=OdorC1, StateName=OdorC1)
            -> Take(Count=1) => #9
            IncludeWorkflow(Path=Extensions\OdorState.bonsai, LineName=OdorC2, StateName=OdorC2)
            -> Take(Count=1) => #11
            IncludeWorkflow(Path=Extensions\DefaultState.bonsai, StateName=DefaultStateA)
            -> Take(Count=1) => #13
            IncludeWorkflow(Path=Extensions\DefaultState.bonsai, StateName=DefaultStateB)
            -> Take(Count=1) => #15
            IncludeWorkflow(Path=Extensions\DefaultState.bonsai, StateName=DefaultStateC)
            -> Take(Count=1) => #17
            IncludeWorkflow(Path=Extensions\DefaultState.bonsai, StateName=DefaultState)
            -> Take(Count=1) => #19
            #1, #3, #5, #7, #9, #11, #13, #15, #17, #19 -> Merge
            -> ToDictionary(KeySelector=Item2, ElementSelector=Item1)
            -> AsyncSubject SubjectDictionary
            -> WorkflowOutput

    GroupWorkflow CameraController
        BehaviorSubject<System.Boolean> CameraStreamEnabled

        BooleanProperty(Value=false)
        -> MulticastSubject CameraStreamEnabled

        BehaviorSubject<DataSchema.CameraCommand> CameraCommands => #3
        -> Condition Stop
            WorkflowInput Source1
            -> MemberSelector(Selector=State)
            -> BitwiseNot
            -> WorkflowOutput
        -> GroupWorkflow StopStream
            WorkflowInput Source1
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmStopPayload(PwmStop=Pwm0))
            -> MulticastSubject Commands => #2
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.CameraTriggerLine)
            -> PropertyMapping(PwmAndStimDisable) => #5
            #2, #5 -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmAndStimDisablePayload(PwmAndStimDisable=Pwm0ToOut1))
            -> MulticastSubject Commands
            -> BooleanProperty(Value=false)
            -> MulticastSubject CameraStreamEnabled
            -> WorkflowOutput
        #3 -> Condition Start
            WorkflowInput Source1
            -> MemberSelector(Selector=State)
            -> WorkflowOutput
        -> GroupWorkflow StartStream
            WorkflowInput Source1 => #0
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=CameraProperties.ImagingRate)
            -> PropertyMapping(Frequency) => #3
            #0, #3 -> Harp.OutputExpander.ConfigurePwm(PwmChannels=Pwm0, Frequency=60, DutyCycle=10, PulseCount=0, TriggerSource=Software, EventConfig=Enabled)
            -> MulticastSubject Commands => #5
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.CameraTriggerLine)
            -> PropertyMapping(PwmAndStimEnable) => #8
            #5, #8 -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmAndStimEnablePayload(PwmAndStimEnable=Pwm0ToOut1))
            -> MulticastSubject Commands
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmStartPayload(PwmStart=Pwm0))
            -> MulticastSubject Commands
            -> BooleanProperty(Value=true)
            -> MulticastSubject CameraStreamEnabled
            -> WorkflowOutput

        SubscribeSubject Events
        -> Harp.OutputExpander.FilterRegister(FilterType=Include, Register=Harp.OutputExpander.PwmRiseEvent)
        -> PublishSubject PwmRise

        SubscribeSubject Events
        -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.TimestampedPwmRiseEvent)
        -> Condition CamTriggerLine => #13
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=WorkflowProperty<Harp.OutputExpander.PwmChannels>(Value=Pwm0))
            -> WorkflowOutput
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.ExposureTime)
        -> PropertyMapping(ExposureTime) => #16
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.SerialNumber)
        -> PropertyMapping(SerialNumber) => #19
        #13, #16, #19 -> Aeon.Acquisition.SpinnakerCapture(Index=nil, SerialNumber=24026619, ColorProcessing=Default, ExposureTime=10000, Gain=0, Binning=1)
        -> PublishSubject VideoFeed

        SubscribeSubject VideoFeed
        -> MemberSelector(Selector=Value.Image)
        -> Bonsai.Vision.Grayscale
        -> Bonsai.Vision.Threshold(ThresholdValue=59, MaxValue=255, ThresholdType=BinaryInv)
        -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=485, Y=722), Point(X=647, Y=722), Point(X=647, Y=961), Point(X=485, Y=961))), Operation=Sum)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Activity.Val0)
        -> GreaterThan(Operand=DoubleProperty(Value=1500000))
        -> BehaviorSubject RoiThreshold

GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.LoggingRootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:/Users/bvw8415/Delphi/HIW3/2025082204/, ChunkSize=1)

    SubscribeSubject Events
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Expander, Heartbeats=Events, ClosingDuration=nil)

    SubscribeSubject SessionSettings => #6
    SubscribeSubject Events => #7
    #6, #7 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject RuleSettings => #12
    SubscribeSubject Events => #13
    #12, #13 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats=Events, ClosingDuration=nil, LogName=RuleSettings)

    BooleanProperty(Value=false)
    -> BehaviorSubject PokeActivity

    SubscribeSubject PokeOnset
    -> BooleanProperty(Value=true)
    -> MulticastSubject PokeActivity => #21
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.PostEventTime) => #23
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.PreEventTime)
    -> PropertyMapping(Value) => #26
    #23, #26 -> Add(Operand=DoubleProperty(Value=2.5))
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #29
    #21, #29 -> Throttle(DueTime=PT5S)
    -> BooleanProperty(Value=false)
    -> MulticastSubject PokeActivity

    SubscribeSubject VideoFeed => #33
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.PreEventTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #37
    #33, #37 -> Delay(DueTime=PT2.5S) => #38
    SubscribeSubject PokeActivity => #39
    #38, #39 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> MemberSelector(Selector=Item1) => #42
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.ImagingRate)
    -> PropertyMapping(FrameRate) => #45
    #42, #45 -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats=Events, ClosingDuration=nil, LogName=VideoData, FrameRate=60)

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RobocopyTimeInterval)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(Period)
    -> Timer(DueTime=PT0S, Period=PT1H)
    -> Unit
    -> MulticastSubject StartRobocopy

    BehaviorSubject<System.Reactive.Unit> StartRobocopy
    -> SelectMany Robocopy
        WorkflowInput Source1

        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.LoggingRootPath) => #2
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RemoteTransferRootPath) => #4
        #2, #4 -> Zip
        -> Format(Format="python\robocopy.py {0} {1}", Selector="Item1,Item2")
        -> PropertyMapping(Arguments)
        -> Bonsai.IO.StartProcess
          FileName=..\.python\.venv\Scripts\python.exe
          Arguments: python\robocopy.py C:/Users/bvw8415/Delphi/HIW3/2025082204/ C:/Users/bvw8415/OneDrive - Northwestern University/Andrew Jacob Pixley Fink - FinkLab-SharedDrive/DATA/Behavior/Delphi/RobocopyHIW/
        -> Take(Count=1)
        -> WorkflowOutput

IncludeWorkflow => #5
  Path=Extensions\DelphiVisualizer.bonsai
  EventsInSubject=Events
  SessionSettingsSubject=SessionSettings
  RuleSettingsSubject=RuleSettings
  CurrentStateSubject=CurrentState
  PokeOnsetSubject=PokeOnset
  StimOnsetSubject=StimulusDelivered
  EventsOutSubject=Commands
-> VisualizerMapping(VisualizerType=TypeMapping<Extensions.Extensions.DeviceVisualizer>) => #6
SubscribeSubject VideoFeed
-> MemberSelector(Selector=Value.Image)
-> VisualizerMapping => #9
#6, #9 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
#5 -> GroupWorkflow ExitTrigger
    WorkflowInput Source1
    -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.FilterRegisterAddress(Address=88))
    -> Unit
    -> MulticastSubject StartRobocopy
    -> MulticastSubject CloseAllLines
    -> Take(Count=1)
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(StopCameraStream, CloseAllLinesKey, OpenPortValveKey, ClosePortValveKey, PokeOnKey, PokeOffKey, StartCameraStream)
-> GroupWorkflow ControlKeys
    ExternalizedMapping(Filter(DisplayName=StartCameraStream, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> Unit
    -> SelectMany StartCameraStream => #3
        WorkflowInput Source1

        ExternalizedMapping(State)
        -> DataSchema.CameraCommand(State=true)
        -> WorkflowOutput
    ExternalizedMapping(Filter(DisplayName=StopCameraStream, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Alt", SuppressRepetitions=false)
    -> SelectMany StopCameraStream => #6
        WorkflowInput Source1

        ExternalizedMapping(State)
        -> DataSchema.CameraCommand(State=false)
        -> WorkflowOutput
    #3, #6 -> Merge
    -> MulticastSubject CameraCommands

    ExternalizedMapping(Filter(DisplayName=CloseAllLinesKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Alt", SuppressRepetitions=false)
    -> Unit
    -> MulticastSubject CloseAllLines

    ExternalizedMapping(Filter(DisplayName=OpenPortValveKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true) => #15
    ExternalizedMapping(Filter(DisplayName=ClosePortValveKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=false) => #18
    #15, #18 -> Merge
    -> MulticastSubject PortValveCommand

    ExternalizedMapping(Filter(DisplayName=PokeOnKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock B D F P R T V Shift", SuppressRepetitions=true)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PokeOnset

    ExternalizedMapping(Filter(DisplayName=PokeOffKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyUp(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock B D F P R T V Shift")
    -> BooleanProperty(Value=true)
    -> MulticastSubject PokeOffset

Timer(DueTime=PT0S, Period=PT1S)
-> Aeon.Acquisition.AvailableMemory

BehaviorSubject<System.DateTimeOffset> TimestampDump
