WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(HardwareSettings, RuleSettings, NextRuleSettings, SwitchDateTime)
-> GroupWorkflow InitializeSettings
    ExternalizedMapping(Path(DisplayName=HardwareSettings))
    -> Bonsai.IO.ReadAllText(Path=schemas\hardware-schema-refactor.yml)
    -> HardwareSchema.DeserializeFromYaml(Type=TypeMapping<HardwareSchema.HardwareSchema>)
    -> Take(Count=1)
    -> AsyncSubject HardwareSchema

    ExternalizedMapping(Path(DisplayName=RuleSettings))
    -> RuleSelector(Path=schemas\rule-3.yml) => #6
    ExternalizedMapping(Path(DisplayName=NextRuleSettings))
    -> RuleSelector(Path=schemas\rule-3.yml) => #8
    ExternalizedMapping(DueTimes(DisplayName=SwitchDateTime))
    -> RuleTimer(DueTimes(RuleSchedule(DueTime=2026-01-30T11:50:00, RuleSchema=schemas\rule-5.yml))) => #10
    #8, #10 -> Sample => #11
    #6, #11 -> Merge
    -> RuleSchema.DeserializeFromYaml(Type=TypeMapping<RuleSchema.RuleSchema>)
    -> BehaviorSubject RuleSettings

    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=DelphiController)
    -> AsyncSubject ControllerSettings

    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=DeluxDriver)
    -> AsyncSubject DeluxSettings

    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=WhiteRabbit)
    -> AsyncSubject WhiteRabbitSettings

    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=FluidicSettings)
    -> AsyncSubject FluidicSettings

    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,RuleSchema.StateDefinition)> StateDictionary
    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,RuleSchema.StateDefinition)> TransitionState

    SubscribeSubject RuleSettings
    -> SelectMany GenerateStateDictionary
        WorkflowInput Source1

        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=Rule.StateDefinitions)
        -> Merge => #3
        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=Rule.StateDefinitions.Count)
        -> PropertyMapping(Count) => #6
        #3, #6 -> Take(Count=4)
        -> ToDictionary(KeySelector=Name, ElementSelector=it)
        -> WorkflowOutput
    -> MulticastSubject StateDictionary
    -> MulticastSubject TransitionState

GroupWorkflow Logging
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=LoggingRootPath) => #1
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=SubjectId) => #3
    SubscribeSubject HardwareSchema
    -> MemberSelector(Selector=SessionTime) => #5
    #1, #3, #5 -> Zip
    -> Format(Format={0}/{1}/{2}, Selector="Item1,Item2,Item3")
    -> Take(Count=1)
    -> BehaviorSubject SessionPath
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:\Users\svc_aind_chronic\Documents\data\test_data\local/841322/2026-03-19T18-54-37, ChunkSize=1)

    Disable SubscribeSubject PathPrefix
    -> Disable AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=BehaviorVideos)
    -> Disable Defer BehaviorVideos
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

        SubscribeSubject VideoFeed => #3
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FrameRate)
        -> PropertyMapping(FrameRate) => #6
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FfmpegInput)
        -> PropertyMapping(InputArguments) => #9
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FfmpegOutput)
        -> PropertyMapping(OutputArguments) => #12
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.CameraName)
        -> PropertyMapping(LogName) => #15
        #3, #6, #9, #12, #15 -> GroupWorkflow LogVideo(Description="Chunks and logs a timestamped video stream into the base data log.")
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name(DisplayName=Heartbeats, Description="The source of heartbeat signals used as a timing signal for closing groups.", Category=GroupClosing))
            -> SubscribeSubject => #2
            SubscribeSubject ChunkSize
            -> PropertyMapping(ChunkSize) => #4
            ExternalizedMapping(ClosingDuration(Category=GroupClosing)) => #5
            #0, #2, #4, #5 -> Aeon.Acquisition.GroupByTime(ChunkSize=1, ClosingDuration=PT30S) => #6
            ExternalizedMapping(Name(DisplayName=LogName, Description="The base name of the video log, without extension."), FrameRate, OutputArguments, InputArguments) => #7
            #6, #7 -> CreateObservable LogVideo
                WorkflowInput Source1
                -> AsyncSubject Data

                SubscribeSubject Data
                -> Merge => #3
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #5
                ExternalizedMapping(Name) => #6
                #5, #6 -> IncludeWorkflow PortCamera(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=csv)
                -> PropertyMapping(FileName) => #8
                #3, #8 -> Bonsai.IO.CsvWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\delux\data_mouse1\2026-07-27T22-58-12\behavior-videos\PortCamera\PortCamera_2026-07-28T18-00-00.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                  Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp"
                -> MemberSelector(Selector=Value.Image) => #10
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #12
                #12, #6 -> IncludeWorkflow PortCamera(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=mp4)
                -> PropertyMapping(FileName) => #14
                ExternalizedMapping(FrameRate, OutputArguments, InputArguments) => #15
                #10, #14, #15 -> AllenNeuralDynamics.Core.FfmpegVideoWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\delux\data_mouse1\2026-07-27T22-58-12\behavior-videos\PortCamera\PortCamera_2026-07-28T18-00-00.mp4
                  Overwrite=false
                  FrameRate=90
                  Verbosity=Verbose
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_qsv -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune film -preset fast -crf 21 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
                -> WorkflowOutput
            -> Switch
            -> WorkflowOutput

        SubscribeSubject Video1Feed => #17
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.FrameRate)
        -> PropertyMapping(FrameRate) => #20
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.FfmpegInput)
        -> PropertyMapping(InputArguments) => #23
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.FfmpegOutput)
        -> PropertyMapping(OutputArguments) => #26
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.CameraName)
        -> PropertyMapping(LogName) => #29
        #17, #20, #23, #26, #29 -> GroupWorkflow LogVideo1(Description="Chunks and logs a timestamped video stream into the base data log.")
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name(DisplayName=Heartbeats, Description="The source of heartbeat signals used as a timing signal for closing groups.", Category=GroupClosing))
            -> SubscribeSubject => #2
            SubscribeSubject ChunkSize
            -> PropertyMapping(ChunkSize) => #4
            ExternalizedMapping(ClosingDuration(Category=GroupClosing)) => #5
            #0, #2, #4, #5 -> Aeon.Acquisition.GroupByTime(ChunkSize=1, ClosingDuration=PT30S) => #6
            ExternalizedMapping(Name(DisplayName=LogName, Description="The base name of the video log, without extension."), FrameRate, OutputArguments, InputArguments) => #7
            #6, #7 -> CreateObservable LogVideo
                WorkflowInput Source1
                -> AsyncSubject Data

                SubscribeSubject Data
                -> Merge => #3
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #5
                ExternalizedMapping(Name) => #6
                #5, #6 -> IncludeWorkflow OverheadCamera(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=csv)
                -> PropertyMapping(FileName) => #8
                #3, #8 -> Bonsai.IO.CsvWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\delux\data_mouse1\2026-07-27T22-58-12\behavior-videos\OverheadCamera\OverheadCamera_2026-07-28T18-00-00.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                  Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp"
                -> MemberSelector(Selector=Value.Image) => #10
                SubscribeSubject Data
                -> MemberSelector(Selector=Key) => #12
                #12, #6 -> IncludeWorkflow OverheadCamera(Path=Aeon.Acquisition:FormatFileName.bonsai, Extension=mp4)
                -> PropertyMapping(FileName) => #14
                ExternalizedMapping(FrameRate, OutputArguments, InputArguments) => #15
                #10, #14, #15 -> AllenNeuralDynamics.Core.FfmpegVideoWriter
                  FileName=C:\Users\svc_aind_chronic\Documents\delux\data_mouse1\2026-07-27T22-58-12\behavior-videos\OverheadCamera\OverheadCamera_2026-07-28T18-00-00.mp4
                  Overwrite=false
                  FrameRate=45
                  Verbosity=Verbose
                  OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_qsv -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune film -preset fast -crf 21 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
                  InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
                -> WorkflowOutput
            -> Switch
            -> WorkflowOutput

    SubscribeSubject PathPrefix
    -> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=Behavior)
    -> Defer Behavior
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject PathPrefix

        GroupWorkflow HarpLogging
            SubscribeSubject DelphiEvents
            -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpDemux.bonsai, LogName=DelphiController, Heartbeats=Heartbeats, ClosingDuration=nil)

            SubscribeSubject DeluxEvents
            -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpDemux.bonsai, LogName=DeLux, Heartbeats=Heartbeats, ClosingDuration=nil)

            SubscribeSubject WhiteRabbitEvents
            -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpDemux.bonsai, LogName=WhiteRabbit, Heartbeats=Heartbeats, ClosingDuration=nil)

            GroupWorkflow DelphiControllerPath
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=DelphiController)
                -> Take(Count=1) => #2
                StringProperty(Value=device.yml)
                -> Take(Count=1) => #4
                #0, #2, #4 -> Zip
                -> Format(Format={0}\{1}\{2}, Selector="Item1,Item2,Item3")
                -> WorkflowOutput
            -> PropertyMapping(Path) => #7
            GroupWorkflow HarpDelphiControllerGetMetadata => #8
                StringProperty
                  Value:
                    %YAML 1.1
                    ---
                    # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                    device: DelphiController
                    whoAmI: 1409
                    firmwareVersion: "1.0.0"
                    hardwareTargets: "1.0"
                    registers:
                        ValveState:
                            address: 32
                            type: U16
                            access: Event
                            description: "Set the enabled/disabled state (enabled = 1) of all valves"
                        ValvesSet:
                            address: 33
                            type: U16
                            maskType: ValveMask
                            access: Write
                            description: "Write a 1 to any bit to enable the corresponding valve."
                        ValvesClear:
                            address: 34
                            type: U16
                            maskType: ValveMask
                            access: Write
                            description: "Write a 1 to any bit to disable the corresponding valve."
                        ValveConfig0: &valveConfig
                            address: 35
                            type: U8
                            length: 12
                            access: Write
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve0."
                        ValveConfig1:
                            <<: *valveConfig
                            address: 36
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve1."
                        ValveConfig2:
                            <<: *valveConfig
                            address: 37
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve2."
                        ValveConfig3:
                            <<: *valveConfig
                            address: 38
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve3."
                        ValveConfig4:
                            <<: *valveConfig
                            address: 39
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve4."
                        ValveConfig5:
                            <<: *valveConfig
                            address: 40
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve5."
                        ValveConfig6:
                            <<: *valveConfig
                            address: 41
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve6."
                        ValveConfig7:
                            <<: *valveConfig
                            address: 42
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve7."
                        ValveConfig8:
                            <<: *valveConfig
                            address: 43
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve8."
                        ValveConfig9:
                            <<: *valveConfig
                            address: 44
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve9."
                        ValveConfig10:
                            <<: *valveConfig
                            address: 45
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve10."
                        ValveConfig11:
                            <<: *valveConfig
                            address: 46
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve11."
                        ValveConfig12:
                            <<: *valveConfig
                            address: 47
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve12."
                        ValveConfig13:
                            <<: *valveConfig
                            address: 48
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve13."
                        ValveConfig14:
                            <<: *valveConfig
                            address: 49
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve14."
                        ValveConfig15:
                            <<: *valveConfig
                            address: 50
                            description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve15."
                        AuxGPIODir:
                            address: 51
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "Specify each auxiliary GPIO pin as an input (0) or output (1)."
                        AuxGPIOState:
                            address: 52
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "Set the state (on or off) of any auxiliary GPIO pins specified as outputs."
                        AuxGPIOSet:
                            address: 53
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "When writing a 1 to any bit, turn on the specified auxiliary GPIO pins specified as outputs."
                        AuxGPIOClear:
                            address: 54
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: "When writing a 1 to any bit, Turn off the specified auxiliary GPIO pins specified as outputs."
                        AuxGPIOInputRiseEvent:
                            address: 55
                            type: U8
                            maskType: AuxGPIOMask
                            access: Event
                            description: ""
                        AuxGPIOInputFallEvent:
                            address: 56
                            type: U8
                            maskType: AuxGPIOMask
                            access: Event
                            description: ""
                        AuxGPIORisingInputs:
                            address: 57
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: ""
                        AuxGPIOFallingInputs:
                            address: 58
                            type: U8
                            maskType: AuxGPIOMask
                            access: Write
                            description: ""
                        PokePin:
                            address: 59
                            type: U8
                            access: Write
                            description: "which poke ports are active."
                        PokePinInverted:
                            address: 60
                            type: U8
                            access: Write
                            description: "Which poke ports are inverted (i.e: transition from HIGH to LOW when a poke occurs)."
                        PokeState:
                            address: 61
                            type: U8
                            access: Event
                            description: "The state of the poke port. An event will be triggered given a poke/ beam break that is greater than the min poke time."
                        RawPokeState:
                            address: 62
                            type: U8
                            access: Event
                            description: "The raw state of the poke pin. Events will be triggered at the onset of a beam break (1) and offset (0)."
                        PokeDometer:
                            address: 63
                            type: U32
                            access: Read
                            description: "number of mouse pokes per port since boot or reset."
                        FSMState:
                            address: 64
                            type: U8
                            access: Write
                            description: "Enable (1) (aka reset) or Disable (0) the poke handling state machine. Note that QueuedOdorIndex must be specified first. Disabling and then enabling a previously-enabled FSM will reset it to its starting state."
                        ForceFSM:
                            address: 65
                            type: U8
                            access: Write
                            description: "Force the poke handling state machine to iterate as if handling a mouse poke. PokeDometers are not incremented."
                        QueuedOdorMask:
                            address: 66
                            type: U16
                            access: Event
                            description: "Queued odors (value: odor valve mask) that will be delivered to the odor port given a register poke. After odors have been dispensed, the register will be set to 0, which indicates that new odors are needed"
                        OdorSetupTimeUS:
                            address: 67
                            type: U32
                            access: Write
                            description: "Time alotted (in microseconds) for the vacuum valve to close."
                        MinOdorDeliveryTimeUS:
                            address: 68
                            type: U32
                            access: Write
                            description: "Minimum time alotted (in microseconds) for the odor delivery state."
                        MaxOdorDeliveryTimeUS:
                            address: 69
                            type: U32
                            access: Write
                            description: "Maximum time alotted (in microseconds) for the odor delivery state."
                        MinimumPokeTimeUS:
                            address: 70
                            type: U32
                            access: Write
                            description: "Minimum time (in microseconds) necessary for a mouse poke port beam to be broken before being interpretted as a poke."
                        OdorDwellTimeUS:
                            address: 71
                            type: U32
                            access: Write
                            description: "Time (in microseconds) that the odor remains in the delivery state."
                        Cam0PinState:
                            address: 72
                            type: U8
                            access: Event
                            description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
                        Cam0FrameRate:
                            address: 73
                            type: U32
                            access: Write
                            description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
                        Cam0DutyCycle:
                            address: 74
                            type: Float
                            access: Write
                            description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
                        EnableCam0Trigger:
                            address: 75
                            type: U8
                            access: Write
                            description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
                        Cam1PinState:
                            address: 76
                            type: U8
                            access: Event
                            description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
                        Cam1FrameRate:
                            address: 77
                            type: U32
                            access: Write
                            description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
                        Cam1DutyCycle:
                            address: 78
                            type: Float
                            access: Write
                            description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
                        EnableCam1Trigger:
                            address: 79
                            type: U8
                            access: Write
                            description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
                        EnableValveLeds:
                            address: 80
                            type: U8
                            access: Write
                            description: "Enable (1) and disable (0) valve LEDs."
                        LatestFlowRate:
                            address: 81
                            type: U8
                            access: Read
                            description: "Latest flow rate measurement sample from ADC0-8."
                        LatestRawAdcSample:
                            address: 82
                            type: U8
                            access: Read
                            description: "Latest raw bit measurement sample from ADC0-8."
                        EnableAdcSampling:
                            address: 83
                            type: U8
                            access: Write
                            description: "Enable (1) and disable (0) ADC sampling."
                        LeakAdcChannel:
                            address: 84
                            type: S8
                            access: Write
                            description: "Set the ADC channel for leak detection. Leak detection is off by Default (-1)."
                        LeakThreshold:
                            address: 85
                            type: Float
                            access: Write
                            description: "Set the threshold for leak detection in mL/min."
                        LeakState:
                            address: 86
                            type: U8
                            access: Event
                            description: "Set the state for leak detection."
                        ManualFlowMeter:
                            address: 87
                            type: S8
                            access: Write
                            description: "Set which ADC channel (if any) is being used for manual flow meter calibration. Set to -1 for no manual flow meter calibration."
                        NominalFlowRate:
                            address: 88
                            type: Float
                            access: Write
                            description: "Set the nominal flow rate for manual flow meter calibration in mL/min."
                        FlowRateTolerance:
                            address: 89
                            type: Float
                            access: Write
                            description: "Set the tolerance for flow rate detection (e.g., +-0.1 mL/min)."
                        ManualFlowMeterState:
                            address: 90
                            type: U8
                            access: Event
                            description: "Set the state for manual flow meter calibration."
                        FlowMeterCalibrations:
                            address: 91
                            type: U8
                            access: Write
                            description: "Calibration for the flow meters."
                        PidUpdateFrequency:
                            address: 92
                            type: Float
                            access: Write
                            description: "Set the update frequency for the PID controller."
                        PidGains:
                            address: 93
                            type: U8
                            length: 12
                            access: Write
                            description: "Set the PID Kp, Ki, and Kd gains for the controller."
                        ProportionalValve0Adc:
                            address: 94
                            type: U8
                            access: Write
                            description: "Set the ADC channel used for the control of proportional valve 0."
                        ProportionalValve0EnablePid:
                            address: 95
                            type: U8
                            access: Write
                            description: "Enable (1) or disable (0) PID control for proportional valve 0."
                        ProportionalValve0DutyCycle:
                            address: 96
                            type: Float
                            access: Write
                            description: "Set the duty cycle for proportional valve 0."
                        ProportionalValve0TargetFlowRate:
                            address: 97
                            type: Float
                            access: Write
                            description: "Set the target flow rate for proportional valve 0."
                        ProportionalValve1Adc:
                            address: 98
                            type: U8
                            access: Write
                            description: "Set the ADC channel used for the control of proportional valve 1."
                        ProportionalValve1EnablePid:
                            address: 99
                            type: U8
                            access: Write
                            description: "Enable (1) or disable (0) PID control for proportional valve 1."
                        ProportionalValve1DutyCycle:
                            address: 100
                            type: Float
                            access: Write
                            description: "Set the duty cycle for proportional valve 1."
                        ProportionalValve1TargetFlowRate:
                            address: 101
                            type: Float
                            access: Write
                            description: "Set the target flow rate for proportional valve 1."
                        ProportionalValve2Adc:
                            address: 102
                            type: U8
                            access: Write
                            description: "Set the ADC channel used for the control of proportional valve 2."
                        ProportionalValve2EnablePid:
                            address: 103
                            type: U8
                            access: Write
                            description: "Enable (1) or disable (0) PID control for proportional valve 2."
                        ProportionalValve2DutyCycle:
                            address: 104
                            type: Float
                            access: Write
                            description: "Set the duty cycle for proportional valve 2."
                        ProportionalValve2TargetFlowRate:
                            address: 105
                            type: Float
                            access: Write
                            description: "Set the target flow rate for proportional valve 2."
                        FreezePidUpdates:
                            address: 106
                            type: U8
                            access: Write
                            description: "Enable to freeze PID updates when the final valve is energized."
                    groupMasks:
                        ValveMask:
                            description: "Valve that can be configured/enabled/disabled"
                            values:
                                Valve0: 0x0
                                Valve1: 0x1
                                Valve2: 0x2
                                Valve3: 0x3
                                Valve4: 0x4
                                Valve5: 0x5
                                Valve6: 0x6
                                Valve7: 0x7
                                Valve8: 0x8
                                Valve9: 0x9
                                Valve10: 0xA
                                Valve11: 0xB
                                Valve12: 0xC
                                Valve13: 0xD
                                Valve14: 0xE
                                Valve15: 0xF
                                AllValves: 0xFFFF
                        AuxGPIOMask:
                            description: "Auxiliary GPIO index."
                            values:
                                AuxGPIO0: 0x01
                                AuxGPIO1: 0x02
                                AuxGPIO2: 0x04
                                AuxGPIO3: 0x08
                                AuxGPIO4: 0x10
                                AuxGPIO5: 0x20
                                AuxGPIO6: 0x40
                                AuxGPIO7: 0x80
                -> Take(Count=1)
                -> WorkflowOutput
            #7, #8 -> Bonsai.IO.WriteAllText
              Path=C:\Users\svc_aind_chronic\Documents\data\test_data\local/841322/2026-03-19T18-54-37\2026-08-17T22-04-21\behavior\DelphiController\device.yml
              Overwrite=false
              Append=false

            GroupWorkflow DeLuxPath
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=DeLux)
                -> Take(Count=1) => #2
                StringProperty(Value=device.yml)
                -> Take(Count=1) => #4
                #0, #2, #4 -> Zip
                -> Format(Format={0}\{1}\{2}, Selector="Item1,Item2,Item3")
                -> WorkflowOutput
            -> PropertyMapping(Path) => #11
            GroupWorkflow HarpDeLuxGetMetadata => #12
                StringProperty
                  Value:
                    %YAML 1.1
                    ---
                    # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                    device: deLuxDriver
                    whoAmI: 1410
                    firmwareVersion: "1.0"
                    hardwareTargets: "1.0"

                    registers:
                        ChannelCurrent:
                            address: 32
                            type: U16
                            length: 3
                            access: Write
                            description: "LED current in mA for channels 1–3. Writes are clamped to ChannelMaxCurrent when an EEPROM is present. The per-channel registers ChannelCurrentCh1–3 (41–43) share storage with this array, so writing either path updates the same channel current."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Channel 1 current (mA)"
                                Channel2:
                                    offset: 1
                                    description: "Channel 2 current (mA)"
                                Channel3:
                                    offset: 2
                                    description: "Channel 3 current (mA)"

                        ChannelEnable:
                            address: 33
                            type: U8
                            access: [Read, Write]
                            maskType: Channels
                            description: "Enable or disable individual LED channels. Set a bit to enable the corresponding channel."

                        ChannelMaxCurrent:
                            address: 34
                            type: U16
                            length: 3
                            access: Read
                            description: "Maximum allowed current in mA for each channel, read from the LED EEPROM. 0 if no EEPROM is detected."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Channel 1 max current (mA)"
                                Channel2:
                                    offset: 1
                                    description: "Channel 2 max current (mA)"
                                Channel3:
                                    offset: 2
                                    description: "Channel 3 max current (mA)"

                        ChannelVf:
                            address: 35
                            type: Float
                            length: 3
                            access: Read
                            description: "LED forward voltage (V) for each channel, read from the EEPROM. 0.0 if no EEPROM is detected."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Channel 1 forward voltage (V)"
                                Channel2:
                                    offset: 1
                                    description: "Channel 2 forward voltage (V)"
                                Channel3:
                                    offset: 2
                                    description: "Channel 3 forward voltage (V)"

                        DriverStatus:
                            address: 36
                            type: U8
                            access: Read
                            maskType: DriverStatusFlags
                            description: "Combined error flags from the BD18398 ERRSTALL register."

                        DriverTemperature:
                            address: 37
                            type: Float
                            access: Read
                            description: "BD18398 junction temperature in degrees Celsius, from the internal thermal ADC. Median of 9 one-shot conversions smoothed with an exponential average (~4 s settling), updated once per second; reads return the latest filtered value. Conversions are noisy while the buck converters switch, hence the filtering."

                        RefreshEeproms:
                            address: 38
                            type: U8
                            access: Write
                            description: "Write any value to trigger an immediate EEPROM rescan on all channels. ChannelMaxCurrent and ChannelVf are updated with the result."

                        ButtonPress:
                            address: 39
                            type: U8
                            access: Event
                            maskType: Channels
                            description: "Fires on each physical button press (not release). Payload is a Channels bitmask of which channel buttons were pressed. Each press also toggles that channel's ChannelEnable bit (unless ChannelSoftwareOverride is set for that channel)."

                        ChannelSoftwareOverride:
                            address: 40
                            type: U8
                            access: [Read, Write]
                            maskType: Channels
                            description: "Software override bitmask. When a channel bit is set, ChannelEnable controls that channel and the physical button is ignored. When clear, the button toggles the channel."

                        ChannelCurrentCh1:
                            address: 41
                            type: U16
                            access: Write
                            description: "Set channel 1 LED current (mA), clamped to ChannelMaxCurrent[0] if an EEPROM is present. Shares storage with ChannelCurrent[0] (address 32); writing either is reflected in the other."

                        ChannelCurrentCh2:
                            address: 42
                            type: U16
                            access: Write
                            description: "Set channel 2 LED current (mA), clamped to ChannelMaxCurrent[1] if an EEPROM is present. Shares storage with ChannelCurrent[1] (address 32); writing either is reflected in the other."

                        ChannelCurrentCh3:
                            address: 43
                            type: U16
                            access: Write
                            description: "Set channel 3 LED current (mA), clamped to ChannelMaxCurrent[2] if an EEPROM is present. Shares storage with ChannelCurrent[2] (address 32); writing either is reflected in the other."

                        PwmDutyCycle:
                            address: 44
                            type: Float
                            length: 3
                            access: [Read, Write]
                            minValue: 0.0
                            maxValue: 1.0
                            description: "Configure PWM duty cycle as a fraction (0.0-1.0) for each channel. 0.0 = channel held off; 1.0 = channel held on (no PWM). Only active when PwmEnable is set and PwmFrequency is non-zero for that channel."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Channel 1 PWM duty cycle (0.0-1.0)"
                                Channel2:
                                    offset: 1
                                    description: "Channel 2 PWM duty cycle (0.0-1.0)"
                                Channel3:
                                    offset: 2
                                    description: "Channel 3 PWM duty cycle (0.0-1.0)"

                        PwmFrequency:
                            address: 45
                            type: U16
                            length: 3
                            access: [Read, Write]
                            minValue: 0
                            maxValue: 1000
                            description: "Software PWM frequency (Hz) for each channel. 0 = PWM disabled for that channel (held at its enable state). PwmDutyCycle is ignored when frequency is 0."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Channel 1 PWM frequency (Hz)"
                                Channel2:
                                    offset: 1
                                    description: "Channel 2 PWM frequency (Hz)"
                                Channel3:
                                    offset: 2
                                    description: "Channel 3 PWM frequency (Hz)"

                        PwmEnable:
                            address: 46
                            type: U8
                            access: [Read, Write]
                            maskType: Channels
                            description: "Per-channel PWM enable bitmask. Set a bit to activate software PWM for that channel using PwmFrequency and PwmDutyCycle. Clear a bit to hold the channel at its normal enable state. Freq/duty settings are preserved when PWM is disabled."

                        TriggerMode:
                            address: 47
                            type: U8
                            length: 3
                            access: [Read, Write]
                            description: "Input mode for each trigger pin. 0=Off (ignored), 1=Gate (LED on while pin is high), 2=Pulse (LED on for TriggerPulseDuration ms on rising edge, re-triggerable), 3=Notify (Harp event on rising edge, no LED action). Modes 1-3 override ChannelSoftwareOverride and button state. A rising input edge in any non-Off mode emits TriggerEvent (49). The trigger output is a separate, always-available function configured via TriggerOutFrequency/TriggerOutDutyCycle (emits TriggerOutEvent (59)); on boards where input and output share a pin, an active output suspends that pin's input until the output is disabled."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    maskType: TriggerModeConfig
                                    description: "Channel 1 trigger mode"
                                Channel2:
                                    offset: 1
                                    maskType: TriggerModeConfig
                                    description: "Channel 2 trigger mode"
                                Channel3:
                                    offset: 2
                                    maskType: TriggerModeConfig
                                    description: "Channel 3 trigger mode"

                        TriggerPulseDuration:
                            address: 48
                            type: U16
                            length: 3
                            access: [Read, Write]
                            description: "Pulse duration in milliseconds for each channel's Pulse trigger mode. A new rising edge while a pulse is active restarts the timer."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Channel 1 pulse duration (ms)"
                                Channel2:
                                    offset: 1
                                    description: "Channel 2 pulse duration (ms)"
                                Channel3:
                                    offset: 2
                                    description: "Channel 3 pulse duration (ms)"

                        TriggerEvent:
                            address: 49
                            type: U8
                            access: Event
                            maskType: Channels
                            description: "Fires on every trigger rising edge in any non-Off mode. Payload is a Channels bitmask indicating which channels triggered. Multiple channels may fire in the same event if edges coincide."

                        Barrel3Active:
                            address: 50
                            type: U8
                            access: Event
                            description: "Fires when GPIO23 changes state. Payload is 1 on a low-to-high transition, 0 on a high-to-low transition."

                        ChannelFaultStatus:
                            address: 51
                            type: U8
                            length: 3
                            access: [Event, Read]
                            maskType: ChannelFaultFlags
                            description: "Per-channel fault flags from BD18398 ERRST1–3. One byte per channel; an event is emitted when any bit changes. Faults are only reported while the channel is enabled (CHONx=1)."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Channel 1 fault flags"
                                Channel2:
                                    offset: 1
                                    description: "Channel 2 fault flags"
                                Channel3:
                                    offset: 2
                                    description: "Channel 3 fault flags"

                        ProvisionLedInfo:
                            address: 52
                            type: U8
                            length: 33
                            access: Write
                            visibility: private
                            description: "Write to provision a custom LED EEPROM on the specified channel. Writing triggers an asynchronous EEPROM write on Core 1; read ProvisionResult (addr 53) to get the outcome. Payload layout: byte 0 = channel (1–3); bytes 1–2 = max current uint16 LE (mA); bytes 3–6 = forward voltage float32 LE (V); bytes 7–22 = part name (16 bytes, null-padded); bytes 23–32 = serial number (10 bytes, null-padded). Uses Search ROM to locate the DS28EC20 among other 1-Wire devices (e.g. a DS18B20 temperature sensor) on the same bus."

                        ProvisionResult:
                            address: 53
                            type: U8
                            access: Read
                            visibility: private
                            description: "Result of the last ProvisionLedInfo write. 0 = idle (no result or reset); 1 = OK; 2 = no device found; 3 = write CRC error; 4 = scratchpad mismatch; 5 = copy failed; 6 = foreign chip (non-blank chip without dLx! header — refused to overwrite)."

                        OnewireDeviceRoms:
                            address: 54
                            type: U8
                            length: 96
                            access: Read
                            visibility: private
                            description: "1-Wire ROM codes found during the most recent bus scan. Layout: 3 channels × 4 device slots × 8 bytes. Each ROM is [family_code, serial×6, CRC8]. Unused slots are zeroed. DS28EC20 family = 0x43, DS2431 = 0x2D, DS18B20 = 0x28. Updated every periodic scan and on RefreshEeproms writes."

                        ChannelTemperature:
                            address: 55
                            type: Float
                            length: 3
                            access: Read
                            description: "DS18B20 board temperature (°C) for each channel. Reads the first DS18B20 found on each channel's 1-Wire bus using Match ROM. -300.0 if no DS18B20 is detected on that channel. Updated every periodic scan and on RefreshEeproms writes."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Channel 1 board temperature (°C)"
                                Channel2:
                                    offset: 1
                                    description: "Channel 2 board temperature (°C)"
                                Channel3:
                                    offset: 2
                                    description: "Channel 3 board temperature (°C)"

                        CurrentSenseVos:
                            address: 56
                            type: Float
                            access: [Read, Write]
                            description: "BD18398 current sense amplifier offset voltage (V) used in the LED current formula: ILED = (VISET - Vos) / (12 x RSNS). Nominal datasheet value is 0.200 V; typical per-device variation is 0.200-0.215 V. Increasing this value raises the output current at all setpoints, with the largest effect at low currents. Persists across power cycles. Clamped to [0.100, 0.400] V on write. Default: 0.200 V."

                        TriggerOutDutyCycle:
                            address: 57
                            type: Float
                            length: 3
                            access: [Read, Write]
                            minValue: 0.0
                            maxValue: 1.0
                            description: "PWM output duty cycle as a fraction (0.0-1.0) for each trigger output pin. 0.0 = pin held low; 1.0 = pin held high (no PWM). Ignored when TriggerOutFrequency is 0."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Trigger output 1 duty cycle (0.0-1.0)"
                                Channel2:
                                    offset: 1
                                    description: "Trigger output 2 duty cycle (0.0-1.0)"
                                Channel3:
                                    offset: 2
                                    description: "Trigger output 3 duty cycle (0.0-1.0)"

                        TriggerOutFrequency:
                            address: 58
                            type: U16
                            length: 3
                            access: [Read, Write]
                            minValue: 0
                            maxValue: 1000
                            description: "PWM output frequency (Hz) for each trigger output pin. 0 = output disabled (pin held low). Capped at 1000 Hz. A rising edge of the generated output emits TriggerOutEvent (59). TriggerOutDutyCycle is ignored when frequency is 0."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Trigger output 1 frequency (Hz)"
                                Channel2:
                                    offset: 1
                                    description: "Trigger output 2 frequency (Hz)"
                                Channel3:
                                    offset: 2
                                    description: "Trigger output 3 frequency (Hz)"

                        TriggerOutEvent:
                            address: 59
                            type: U8
                            access: Event
                            maskType: Channels
                            description: "Fires on every rising edge of a trigger output pin (channels with TriggerOutFrequency > 0). Payload is a Channels bitmask of the outputs that rose; multiple bits may be set when phase-aligned outputs rise together. Edges (and this event) reflect any TriggerOutDelay offset, so the event timestamp is the actual time the trigger was sent. Use this to log camera-trigger times on the host."

                        TriggerOutDelay:
                            address: 60
                            type: S16
                            length: 3
                            access: [Read, Write]
                            description: "Trigger output phase offset in microseconds relative to the shared PWM time base. Positive values delay the output edges: with TriggerOutFrequency equal to the LED PwmFrequency, a value of 1500 makes the trigger output rise 1500 µs after the LED PWM rising edge; -1200 makes it rise 1200 µs before. Wraps modulo the output period when the magnitude exceeds it. Use to compensate for cameras with slow trigger reads. Default: 0."
                            payloadSpec:
                                Channel1:
                                    offset: 0
                                    description: "Trigger output 1 delay (µs)"
                                Channel2:
                                    offset: 1
                                    description: "Trigger output 2 delay (µs)"
                                Channel3:
                                    offset: 2
                                    description: "Trigger output 3 delay (µs)"

                    bitMasks:
                        Channels:
                            description: "LED channel bitmask."
                            bits:
                                Channel1: 0x1
                                Channel2: 0x2
                                Channel3: 0x4

                        DriverStatusFlags:
                            description: "BD18398 ERRSTALL error flag bitmask."
                            bits:
                                ErrorCh1: 0x1
                                ErrorCh2: 0x2
                                ErrorCh3: 0x4
                                UnderVoltage: 0x10
                                PinUnderVoltage: 0x20
                                CrcError: 0x40
                                WatchdogError: 0x80

                        ChannelFaultFlags:
                            description: "BD18398 per-channel fault flags (ERRSTx register)."
                            bits:
                                ShortToGround: 0x1
                                OpenCircuit: 0x2
                                SwitchOverCurrent: 0x4
                                LedOverCurrent: 0x8


                    groupMasks:
                        TriggerModeConfig:
                            values:
                                None: 0
                                Gate: 1
                                Pulse: 2
                                Notify: 3
                            description: "Mode for each trigger pin. 0=Off/None (ignored), 1=Gate (LED on while pin is high), 2=Pulse (LED on for TriggerPulseDuration ms on rising edge, re-triggerable), 3=Notify (Harp event on rising edge, no LED action). Modes 1-3 override ChannelSoftwareOverride and button state."
                -> Take(Count=1)
                -> WorkflowOutput
            #11, #12 -> Bonsai.IO.WriteAllText
              Path=C:\Users\svc_aind_chronic\Documents\data\test_data\local/841322/2026-03-19T18-54-37\2026-08-17T22-04-21\behavior\DeLux\device.yml
              Overwrite=false
              Append=false

            AllenNeuralDynamics.WhiteRabbit.GetMetadata
            -> Take(Count=1) => #15
            GroupWorkflow WhiteRabbitPath
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=WhiteRabbit)
                -> Take(Count=1) => #2
                StringProperty(Value=device.yml)
                -> Take(Count=1) => #4
                #0, #2, #4 -> Zip
                -> Format(Format={0}\{1}\{2}, Selector="Item1,Item2,Item3")
                -> WorkflowOutput
            -> PropertyMapping(Path) => #17
            #15, #17 -> Bonsai.IO.WriteAllText
              Path=C:\Users\svc_aind_chronic\Documents\data\test_data\local/841322/2026-03-19T18-54-37\2026-08-17T22-04-21\behavior\WhiteRabbit\device.yml
              Overwrite=false
              Append=false

        SubscribeSubject RuleSettings => #4
        SubscribeSubject DelphiEvents => #5
        #4, #5 -> SubscribeWhen
        -> Delay(DueTime=PT5S)
        -> IncludeWorkflow DelphiEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=Extensions\LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=RuleSettings)
        -> Take(Count=1)

        SubscribeSubject HardwareSchema => #11
        SubscribeSubject DelphiEvents => #12
        #11, #12 -> SubscribeWhen
        -> Delay(DueTime=PT5S)
        -> IncludeWorkflow DelphiEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=Extensions\LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=HardwareSettings)
        -> Take(Count=1)

    Timer(DueTime=PT10S, Period=PT1H)
    -> Unit
    -> MulticastSubject StartRobocopy

    BehaviorSubject<System.Reactive.Unit> StartRobocopy
    -> SelectMany Robocopy
        WorkflowInput Source1

        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=RobocopyScriptPath) => #2
        SubscribeSubject SessionPath => #3
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=RemoteTransferRootPath) => #5
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=SubjectId) => #7
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=SessionTime) => #9
        #5, #7, #9 -> Zip
        -> Format(Format={0}/{1}/{2}, Selector="Item1,Item2,Item3") => #11
        #2, #3, #11 -> Zip
        -> Format(Format="{0} {1} {2}", Selector="Item1,Item2,Item3")
        -> PropertyMapping(Arguments(Selector=it))
        -> Bonsai.IO.StartProcess
          FileName=..\.venv\Scripts\python.exe
          Arguments: C:/Users/svc_aind_chronic/Documents/code/Delphi/src/python/robocopy.py D:/data/22222222/2026-03-17T21-26-19 //allen/aind/stage/chronic/22222222/2026-03-17T21-26-19
        -> Take(Count=1)
        -> WorkflowOutput

ExternalizedMapping(FlowRateSamplingPeriod)
-> GroupWorkflow Hardware
    ExternalizedMapping(FlowRateSamplingPeriod)
    -> GroupWorkflow DelphiController
        BehaviorSubject<Bonsai.Harp.HarpMessage> DelphiCommands
        -> Delay(DueTime=PT0.1S) => #1
        ExternalizedMapping(Name(DisplayName=ControllerSettings))
        -> SubscribeSubject ControllerSettings
        -> MemberSelector(Selector=ComPort)
        -> PropertyMapping(PortName) => #5
        #1, #5 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM8)
        -> PublishSubject DelphiEvents

        Unit
        -> GroupWorkflow DelphiControllerInitialization
            WorkflowInput Source1
            -> GroupWorkflow DisableCameraTriggers
                WorkflowInput Source1
                -> Delay(DueTime=PT0.1S)
                -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCam0TriggerPayload(EnableCam0Trigger=0))
                -> MulticastSubject DelphiCommands
                -> Delay(DueTime=PT0.1S)
                -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableCam1TriggerPayload(EnableCam1Trigger=0))
                -> MulticastSubject DelphiCommands
                -> WorkflowOutput
            -> GroupWorkflow EnableValveLeds
                WorkflowInput Source1
                -> Delay(DueTime=PT0.1S)
                -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableValveLedsPayload(EnableValveLeds=1))
                -> MulticastSubject DelphiCommands
                -> WorkflowOutput
            -> GroupWorkflow PokeFSM
                WorkflowInput Source1
                -> GroupWorkflow DisableFSM
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S)
                    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=0))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow SetPokePin
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S) => #1
                    SubscribeSubject ControllerSettings
                    -> MemberSelector(Selector=PokePin)
                    -> PropertyMapping(PokePin) => #4
                    #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreatePokePinPayload(PokePin=22))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow SetPokePinInverted
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S)
                    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreatePokePinInvertedPayload(PokePinInverted=1))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow SetMinimumPokeTime
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S) => #1
                    SubscribeSubject ControllerSettings
                    -> MemberSelector(Selector=MinPokeTimeUs)
                    -> PropertyMapping(MinimumPokeTimeUS) => #4
                    #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinimumPokeTimeUSPayload(MinimumPokeTimeUS=10000))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow SetDwellTime
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S) => #1
                    SubscribeSubject ControllerSettings
                    -> MemberSelector(Selector=OdorDwellTimeUs)
                    -> PropertyMapping(OdorDwellTimeUS) => #4
                    #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateOdorDwellTimeUSPayload(OdorDwellTimeUS=0))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow SetMinimumOdorDeliveryTime
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S) => #1
                    SubscribeSubject ControllerSettings
                    -> MemberSelector(Selector=MinOdorDeliveryTimeUs)
                    -> PropertyMapping(MinOdorDeliveryTimeUS) => #4
                    #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMinOdorDeliveryTimeUSPayload(MinOdorDeliveryTimeUS=10000))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow SetMaxOdorDeliveryTime
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S) => #1
                    SubscribeSubject ControllerSettings
                    -> MemberSelector(Selector=MaxOdorDeliveryTimeUs)
                    -> PropertyMapping(MaxOdorDeliveryTimeUS) => #4
                    #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateMaxOdorDeliveryTimeUSPayload(MaxOdorDeliveryTimeUS=10000000))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow SetOdorSetupTime
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S) => #1
                    SubscribeSubject ControllerSettings
                    -> MemberSelector(Selector=OdorSetupTimeUs)
                    -> PropertyMapping(OdorSetupTimeUS) => #4
                    #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateOdorSetupTimeUSPayload(OdorSetupTimeUS=10000))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> WorkflowOutput
            -> GroupWorkflow Fluidics
                WorkflowInput Source1
                -> GroupWorkflow EnableADCs
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S)
                    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateEnableAdcSamplingPayload(EnableAdcSampling=1))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow LeakFlowMeter
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S) => #1
                    SubscribeSubject FluidicSettings
                    -> MemberSelector(Selector=LeakFlowmeterAdc)
                    -> PropertyMapping(LeakAdcChannel) => #4
                    #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateLeakAdcChannelPayload(LeakAdcChannel=3))
                    -> MulticastSubject DelphiCommands
                    -> Delay(DueTime=PT0.1S) => #7
                    SubscribeSubject FluidicSettings
                    -> MemberSelector(Selector=LeakThreshold)
                    -> PropertyMapping(LeakThreshold) => #10
                    #7, #10 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateLeakThresholdPayload(LeakThreshold=75))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow ManualFlowMeter
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S) => #1
                    SubscribeSubject FluidicSettings
                    -> MemberSelector(Selector=ManualFlometerAdc)
                    -> PropertyMapping(ManualFlowMeter) => #4
                    #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateManualFlowMeterPayload(ManualFlowMeter=2))
                    -> MulticastSubject DelphiCommands
                    -> Delay(DueTime=PT0.1S) => #7
                    SubscribeSubject FluidicSettings
                    -> MemberSelector(Selector=ManualFlowmeterTargetFlowRate)
                    -> PropertyMapping(NominalFlowRate) => #10
                    #7, #10 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateNominalFlowRatePayload(NominalFlowRate=75))
                    -> MulticastSubject DelphiCommands
                    -> Delay(DueTime=PT0.1S) => #13
                    SubscribeSubject FluidicSettings
                    -> MemberSelector(Selector=ManualFlowmeterFlowRateTolerance)
                    -> PropertyMapping(FlowRateTolerance) => #16
                    #13, #16 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFlowRateTolerancePayload(FlowRateTolerance=5))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow SetupPID
                    WorkflowInput Source1
                    -> Delay(DueTime=PT0.1S)
                    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreatePidUpdateFrequencyPayload(PidUpdateFrequency=200))
                    -> MulticastSubject DelphiCommands
                    -> Delay(DueTime=PT0.1S)
                    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreatePidGainsPayload(Kp=0.18, Ki=0.75, Kd=2))
                    -> MulticastSubject DelphiCommands
                    -> Delay(DueTime=PT0.1S)
                    -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFreezePidUpdatesPayload(FreezePidUpdates=1))
                    -> MulticastSubject DelphiCommands
                    -> WorkflowOutput
                -> GroupWorkflow ProportionalValveFlowMeter
                    WorkflowInput Source1
                    -> GroupWorkflow ProportionalValveMeter0
                        WorkflowInput Source1
                        -> Delay(DueTime=PT0.1S) => #1
                        SubscribeSubject FluidicSettings
                        -> MemberSelector(Selector=ProportionalValveFlowmeter0Adc)
                        -> PropertyMapping(ProportionalValve0Adc) => #4
                        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve0AdcPayload(ProportionalValve0Adc=1))
                        -> MulticastSubject DelphiCommands
                        -> Delay(DueTime=PT0.1S)
                        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve0EnablePidPayload(ProportionalValve0EnablePid=0))
                        -> MulticastSubject DelphiCommands
                        -> Delay(DueTime=PT0.1S) => #10
                        SubscribeSubject FluidicSettings
                        -> MemberSelector(Selector=ProportionalValveFlowmeter0TargetFlowrate)
                        -> PropertyMapping(ProportionalValve0TargetFlowRate) => #13
                        #10, #13 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve0TargetFlowRatePayload(ProportionalValve0TargetFlowRate=75))
                        -> MulticastSubject DelphiCommands
                        -> WorkflowOutput
                    -> GroupWorkflow ProportionalValveMeter1
                        WorkflowInput Source1
                        -> Delay(DueTime=PT0.1S) => #1
                        SubscribeSubject FluidicSettings
                        -> MemberSelector(Selector=ProportionalValveFlowmeter1Adc)
                        -> PropertyMapping(ProportionalValve1Adc) => #4
                        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve1AdcPayload(ProportionalValve1Adc=0))
                        -> MulticastSubject DelphiCommands
                        -> Delay(DueTime=PT0.1S)
                        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve1EnablePidPayload(ProportionalValve1EnablePid=0))
                        -> MulticastSubject DelphiCommands
                        -> Delay(DueTime=PT0.1S) => #10
                        SubscribeSubject FluidicSettings
                        -> MemberSelector(Selector=ProportionalValveFlowmeter1TargetFlowrate)
                        -> PropertyMapping(ProportionalValve1TargetFlowRate) => #13
                        #10, #13 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve1TargetFlowRatePayload(ProportionalValve1TargetFlowRate=75))
                        -> MulticastSubject DelphiCommands
                        -> WorkflowOutput
                    -> GroupWorkflow ProportionalValveMeter2
                        WorkflowInput Source1
                        -> Delay(DueTime=PT0.1S) => #1
                        SubscribeSubject FluidicSettings
                        -> MemberSelector(Selector=ProportionalValveFlowmeter2Adc)
                        -> PropertyMapping(ProportionalValve2Adc) => #4
                        #1, #4 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve2AdcPayload(ProportionalValve2Adc=255))
                        -> MulticastSubject DelphiCommands
                        -> Delay(DueTime=PT0.1S)
                        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve2EnablePidPayload(ProportionalValve2EnablePid=0))
                        -> MulticastSubject DelphiCommands
                        -> Delay(DueTime=PT0.1S) => #10
                        SubscribeSubject FluidicSettings
                        -> MemberSelector(Selector=ProportionalValveFlowmeter2TargetFlowrate)
                        -> PropertyMapping(ProportionalValve2TargetFlowRate) => #13
                        #10, #13 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve2TargetFlowRatePayload(ProportionalValve2TargetFlowRate=75))
                        -> MulticastSubject DelphiCommands
                        -> WorkflowOutput
                    -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput
        -> Unit
        -> Take(Count=1)
        -> AsyncSubject ControllerReady

        ExternalizedMapping(Name(DisplayName=InitiateFSM))
        -> BehaviorSubject<System.Reactive.Unit> InitiateFSM
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateFSMStatePayload(FSMState=1))
        -> MulticastSubject DelphiCommands

        SubscribeSubject DelphiEvents
        -> Take(Count=1)
        -> Delay(DueTime=PT5S)
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
        -> MulticastSubject DelphiCommands

        ExternalizedMapping(Name(DisplayName=QueueOdor))
        -> BehaviorSubject<System.Int32> QueueOdor => #23
        -> Disable InputMapping(QueuedOdorIndex(Selector=it)) => #24
        #23 -> PropertyMapping(QueuedOdorMask) => #25
        Source1=#24, Source1=#25, Source2=#25 -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateQueuedOdorMaskPayload(QueuedOdorMask=2))
        -> MulticastSubject DelphiCommands

        SubscribeSubject DelphiEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.DelphiController.FilterRegister(FilterType=Include, Register=AllenNeuralDynamics.DelphiController.PokeState)
        -> IntProperty(Value=1)
        -> Accumulate
        -> BehaviorSubject PokeCount

        ExternalizedMapping(Period(DisplayName=FlowRateSamplingPeriod))
        -> Timer(DueTime=PT0S, Period=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage
          MessageType=Read
          Payload=AllenNeuralDynamics.DelphiController.CreateLatestFlowRatePayload(ADC0=0, ADC1=0, ADC2=0, ADC3=0, ADC4=0, ADC5=0, ADC6=0, ADC7=0)
        -> MulticastSubject DelphiCommands

        SubscribeSubject DelphiEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Read)
        -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.LatestFlowRate)
        -> PublishSubject FlowRates

    Disable GroupWorkflow CameraController
        SubscribeSubject DeluxEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.deLuxDriver.Parse(Register=AllenNeuralDynamics.deLuxDriver.TimestampedTriggerOutEvent) => #2
        SubscribeSubject CameraStarted => #3
        SubscribeSubject Camera1Started => #4
        #3, #4 -> Zip
        -> Take(Count=1) => #6
        #2, #6 -> SkipUntil => #7
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject FrameEvent
        #7 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.value__)
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=3))
            -> WorkflowOutput
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject FrameEvent1

        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.SerialNumber)
        -> PropertyMapping(SerialNumber) => #15
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.Exposure)
        -> PropertyMapping(ExposureTime) => #18
        #15, #18 -> AllenNeuralDynamics.Core.AindSpinnakerCapture
          Index=nil
          SerialNumber=25502899
          ColorProcessing=Default
          ExposureTime=2000
          Gain=0
          Binning=1
          Gamma=nil
          PixelFormat=Mono8
          RegionOfInterest(X=0, Y=0, Width=0, Height=0)
          AdcBitDepth=nil
        -> PublishSubject CameraFrame

        SubscribeSubject CameraFrame
        -> IsEmpty
        -> BitwiseNot
        -> PublishSubject CameraStarted

        FloatProperty(Value=1) => #25
        SubscribeSubject CameraFrame => #26
        SubscribeSubject FrameEvent
        -> Take(Count=1) => #28
        #26, #28 -> SkipUntil => #29
        SubscribeSubject FrameEvent => #30
        #29, #30 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject VideoFeed
        -> MemberSelector(Selector=Seconds)
        -> Bonsai.Dsp.Difference(Order=1) => #35
        #25, #35 -> CombineLatest
        -> Divide

        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.SerialNumber)
        -> PropertyMapping(SerialNumber) => #40
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.Exposure)
        -> PropertyMapping(ExposureTime) => #43
        #40, #43 -> AllenNeuralDynamics.Core.AindSpinnakerCapture
          Index=nil
          SerialNumber=25431289
          ColorProcessing=Default
          ExposureTime=2000
          Gain=0
          Binning=1
          Gamma=nil
          PixelFormat=Mono8
          RegionOfInterest(X=0, Y=0, Width=0, Height=0)
          AdcBitDepth=nil
        -> PublishSubject Camera1Frame

        SubscribeSubject Camera1Frame
        -> IsEmpty
        -> BitwiseNot
        -> PublishSubject Camera1Started

        FloatProperty(Value=1) => #50
        SubscribeSubject Camera1Frame => #51
        SubscribeSubject FrameEvent1
        -> Take(Count=1) => #53
        #51, #53 -> SkipUntil => #54
        SubscribeSubject FrameEvent1 => #55
        #54, #55 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject Video1Feed
        -> MemberSelector(Selector=Seconds)
        -> Bonsai.Dsp.Difference(Order=1) => #60
        #50, #60 -> CombineLatest
        -> Divide

    GroupWorkflow DeLux
        BehaviorSubject<Bonsai.Harp.HarpMessage> DeluxCommands
        -> Delay(DueTime=PT0.1S) => #1
        SubscribeSubject DeluxSettings
        -> MemberSelector(Selector=ComPort)
        -> PropertyMapping(PortName) => #4
        #1, #4 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM9)
        -> PublishSubject DeluxEvents

        Unit
        -> GroupWorkflow EnableLed
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S)
            -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=33, PayloadType=U8, Value=0))
            -> MulticastSubject DeluxCommands
            -> WorkflowOutput
        -> GroupWorkflow SetLedCurrent
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S) => #1
            SubscribeSubject DeluxSettings
            -> MemberSelector(Selector=Ch1Current)
            -> PropertyMapping(Channel1) => #4
            SubscribeSubject DeluxSettings
            -> MemberSelector(Selector=Ch2Current)
            -> PropertyMapping(Channel2) => #7
            SubscribeSubject DeluxSettings
            -> MemberSelector(Selector=Ch3Current)
            -> PropertyMapping(Channel3) => #10
            #1, #4, #7, #10 -> AllenNeuralDynamics.deLuxDriver.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.deLuxDriver.CreateChannelCurrentPayload(Channel1=1200, Channel2=1200, Channel3=0))
            -> MulticastSubject DeluxCommands
            -> WorkflowOutput
        -> GroupWorkflow TriggerSetup
            WorkflowInput Source1
            -> Delay(DueTime=PT0.1S)
            -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=46, PayloadType=U8, Value=3))
            -> MulticastSubject DeluxCommands
            -> Delay(DueTime=PT0.1S) => #4
            SubscribeSubject DeluxSettings
            -> MemberSelector(Selector=Ch1PulseFrequency)
            -> PropertyMapping(Channel1) => #7
            SubscribeSubject DeluxSettings
            -> MemberSelector(Selector=Ch2PulseFrequency)
            -> PropertyMapping(Channel2) => #10
            SubscribeSubject DeluxSettings
            -> MemberSelector(Selector=Ch3PulseFrequency)
            -> PropertyMapping(Channel3) => #13
            #4, #7, #10, #13 -> AllenNeuralDynamics.deLuxDriver.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.deLuxDriver.CreatePwmFrequencyPayload(Channel1=90, Channel2=90, Channel3=0))
            -> MulticastSubject DeluxCommands
            -> Delay(DueTime=PT0.1S) => #16
            SubscribeSubject DeluxSettings
            -> MemberSelector(Selector=Ch1PulseDutyCycle)
            -> PropertyMapping(Channel1) => #19
            SubscribeSubject DeluxSettings
            -> MemberSelector(Selector=Ch2PulseDutyCycle)
            -> PropertyMapping(Channel2) => #22
            SubscribeSubject DeluxSettings
            -> MemberSelector(Selector=Ch3PulseDutyCycle)
            -> PropertyMapping(Channel3) => #25
            #16, #19, #22, #25 -> AllenNeuralDynamics.deLuxDriver.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.deLuxDriver.CreatePwmDutyCyclePayload(Channel1=0.25, Channel2=0.25, Channel3=0))
            -> MulticastSubject DeluxCommands
            -> Delay(DueTime=PT0.1S)
            -> GroupWorkflow CameraTriggers
                WorkflowInput Source1
                -> AllenNeuralDynamics.deLuxDriver.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.deLuxDriver.CreateTriggerOutFrequencyPayload(Channel1=0, Channel2=0, Channel3=0))
                -> MulticastSubject DeluxCommands
                -> WorkflowOutput
            -> Delay(DueTime=PT0.1S)
            -> AllenNeuralDynamics.deLuxDriver.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.deLuxDriver.CreateTriggerOutDutyCyclePayload(Channel1=0.5, Channel2=0.5, Channel3=0))
            -> MulticastSubject DeluxCommands
            -> Delay(DueTime=PT0.1S)
            -> AllenNeuralDynamics.deLuxDriver.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.deLuxDriver.CreateTriggerOutDelayPayload(Channel1=1000, Channel2=1000, Channel3=0))
            -> MulticastSubject DeluxCommands
            -> WorkflowOutput
        -> Unit
        -> Take(Count=1)
        -> AsyncSubject DeluxReady

        SubscribeSubject DeluxEvents
        -> Take(Count=1)
        -> Delay(DueTime=PT5S)
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
        -> MulticastSubject DeluxCommands

    GroupWorkflow StateController
        BehaviorSubject<System.String> CurrentState

        SubscribeSubject ControllerReady => #1
        SubscribeSubject StateDictionary => #2
        #1, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Index(Operand=StringProperty(Value=DefaultState))
        -> MemberSelector(Selector=OdorIndex)
        -> MulticastSubject QueueOdor
        -> Delay(DueTime=PT1S)
        -> Unit
        -> MulticastSubject InitiateFSM
        -> StringProperty(Value=DefaultState)
        -> MulticastSubject BeginState
        -> Take(Count=1)

        BehaviorSubject<System.String> BeginState => #14
        -> SelectMany SelectState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StateName
            -> MulticastSubject CurrentState

            SubscribeSubject StateDictionary => #4
            SubscribeSubject StateName
            -> PropertyMapping(Key) => #6
            #4, #6 -> TryLookupOrDefault(DefaultState=DefaultState, Key=OdorB)
            -> MemberSelector(Selector=OdorIndex)
            -> MulticastSubject QueueOdor

            SubscribeSubject DelphiEvents
            -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.QueuedOdorMask)
            -> Condition OdorConsumed
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<System.SByte>(Value=0))
                -> WorkflowOutput
            -> Take(Count=1)
            -> AsyncSubject StateComplete

            SubscribeSubject StateName
            -> Condition Default
                WorkflowInput Source1
                -> Equal(Operand=StringProperty(Value=DefaultState))
                -> WorkflowOutput
            -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateForceFSMPayload(ForceFSM=1))
            -> MulticastSubject DelphiCommands

            SubscribeSubject StateComplete => #19
            SubscribeSubject TransitionState => #20
            SubscribeSubject StateComplete => #21
            #20, #21 -> SubscribeWhen => #22
            SubscribeSubject StateName
            -> PropertyMapping(Key) => #24
            #22, #24 -> TryLookupOrDefault(DefaultState=DefaultState, Key=OdorB)
            -> MemberSelector(Selector=TransitionsTo) => #26
            #19, #26 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(it.Item1 as CurrentState, it.Item2 as TransitionState)
            -> Take(Count=1)
            -> WorkflowOutput
        -> MemberSelector(Selector=TransitionState)
        -> UniformSampleStateProbabilities => #17
        -> Condition SampleWithoutReplacement => #18
            WorkflowInput Source1 => #0
            SubscribeSubject RuleSettings => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Rule.SampleWithReplacement)
            -> BitwiseNot
            -> WorkflowOutput
        #18, #14 -> WithLatestFrom => #19
        SubscribeSubject StateDictionary => #20
        SubscribeSubject TransitionState => #21
        #20, #21 -> CombineLatest => #22
        #19, #22 -> WithLatestFrom
        -> UpdateTransitionState
        -> MulticastSubject TransitionState => #25
        #25, #19 -> Zip
        -> MemberSelector(Selector=Item2.Item1) => #27
        #17 -> Condition SampleWithReplacement => #28
            WorkflowInput Source1 => #0
            SubscribeSubject RuleSettings => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Rule.SampleWithReplacement)
            -> WorkflowOutput
        #27, #28 -> Merge
        -> MulticastSubject BeginState

    GroupWorkflow WhiteRabbit
        BehaviorSubject<Bonsai.Harp.HarpMessage> WhiteRabbitCommands => #0
        SubscribeSubject WhiteRabbitSettings
        -> MemberSelector(Selector=ComPort)
        -> PropertyMapping(PortName) => #3
        #0, #3 -> AllenNeuralDynamics.WhiteRabbit.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM6)
        -> PublishSubject WhiteRabbitEvents
        -> WorkflowOutput

        SubscribeSubject WhiteRabbitEvents
        -> Take(Count=1)
        -> Bonsai.Harp.SynchronizeTimestamp
        -> MulticastSubject WhiteRabbitCommands
        -> Delay(DueTime=PT0.01S)
        -> AllenNeuralDynamics.WhiteRabbit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.WhiteRabbit.CreateCounterFrequencyHzPayload(CounterFrequencyHz=500))
        -> MulticastSubject WhiteRabbitCommands

        SubscribeSubject WhiteRabbitEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.WhiteRabbit.Parse(Register=AllenNeuralDynamics.WhiteRabbit.TimestampedCounter)
        -> PublishSubject HarpTimestamp

        SubscribeSubject WhiteRabbitEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.TimestampSeconds)
        -> PublishSubject Heartbeats

        SubscribeSubject WhiteRabbitEvents
        -> Take(Count=1)
        -> Delay(DueTime=PT5S)
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
        -> MulticastSubject WhiteRabbitCommands

    SubscribeSubject DelphiEvents
    -> Take(Count=1)
    -> Bonsai.Harp.SynchronizeTimestamp
    -> MulticastSubject DelphiCommands

    SubscribeSubject DeluxEvents
    -> Take(Count=1)
    -> Bonsai.Harp.SynchronizeTimestamp
    -> MulticastSubject DeluxCommands

ExternalizedMapping(StartCamerasKey, StopCamerasKey, StartPID, StopPID, EnableLeds, DisableLeds)
-> GroupWorkflow Keystrokes
    ExternalizedMapping(Filter(DisplayName=StartCamerasKey))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
    -> GroupWorkflow EnableCameraTriggering
        WorkflowInput Source1 => #0
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings.FrameRate)
        -> PropertyMapping(Channel1) => #3
        SubscribeSubject HardwareSchema
        -> MemberSelector(Selector=CameraSettings1.FrameRate)
        -> PropertyMapping(Channel2) => #6
        #0, #3, #6 -> AllenNeuralDynamics.deLuxDriver.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.deLuxDriver.CreateTriggerOutFrequencyPayload(Channel1=90, Channel2=45, Channel3=0))
        -> MulticastSubject DeluxCommands
        -> WorkflowOutput

    ExternalizedMapping(Filter(DisplayName=StopCamerasKey))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton A Alt", SuppressRepetitions=false)
    -> GroupWorkflow DisableCameraTriggering
        WorkflowInput Source1
        -> AllenNeuralDynamics.deLuxDriver.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.deLuxDriver.CreateTriggerOutFrequencyPayload(Channel1=0, Channel2=0, Channel3=0))
        -> MulticastSubject DeluxCommands
        -> WorkflowOutput

    ExternalizedMapping(Filter(DisplayName=StartPID))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
    -> GroupWorkflow StartPID
        WorkflowInput Source1
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve0EnablePidPayload(ProportionalValve0EnablePid=1))
        -> MulticastSubject DelphiCommands
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve1EnablePidPayload(ProportionalValve1EnablePid=1))
        -> MulticastSubject DelphiCommands
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve2EnablePidPayload(ProportionalValve2EnablePid=1))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput

    ExternalizedMapping(Filter(DisplayName=StopPID))
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton D Shift", SuppressRepetitions=false)
    -> GroupWorkflow StopPID
        WorkflowInput Source1
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve0EnablePidPayload(ProportionalValve0EnablePid=0))
        -> MulticastSubject DelphiCommands
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve1EnablePidPayload(ProportionalValve1EnablePid=0))
        -> MulticastSubject DelphiCommands
        -> Delay(DueTime=PT0.1S)
        -> AllenNeuralDynamics.DelphiController.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.DelphiController.CreateProportionalValve2EnablePidPayload(ProportionalValve2EnablePid=0))
        -> MulticastSubject DelphiCommands
        -> WorkflowOutput

    ExternalizedMapping(Filter(DisplayName=EnableLeds))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false)
    -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=33, PayloadType=U8, Value=3))
    -> MulticastSubject DeluxCommands

    ExternalizedMapping(Filter(DisplayName=DisableLeds))
    -> Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift
      SuppressRepetitions=false
    -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=33, PayloadType=U8, Value=0))
    -> MulticastSubject DeluxCommands

GroupWorkflow Visualizer
    SubscribeSubject DelphiEvents
    -> VisualizerMapping => #1
    SubscribeSubject DelphiEvents
    -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.QueuedOdorMask)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> VisualizerMapping => #5
    SubscribeSubject CurrentState
    -> VisualizerMapping => #7
    SubscribeSubject PokeCount
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.ToString()
    -> Format(Format="Poke Count: {0}", Selector=it)
    -> VisualizerMapping => #11
    SubscribeSubject DelphiEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> AllenNeuralDynamics.DelphiController.FilterRegister(FilterType=Include, Register=AllenNeuralDynamics.DelphiController.ManualFlowMeterState)
    -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.ManualFlowMeterState) => #15
    -> Condition Calibrated
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> WorkflowOutput
    -> StringProperty(Value="Manual Valve Calibrated") => #17
    #15 -> Condition NotCalibrated
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> WorkflowOutput
    -> StringProperty(Value="Manual Valve Needs Calibration") => #19
    #17, #19 -> Merge
    -> VisualizerMapping => #21
    SubscribeSubject DelphiEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> AllenNeuralDynamics.DelphiController.FilterRegister(FilterType=Include, Register=AllenNeuralDynamics.DelphiController.LeakState)
    -> AllenNeuralDynamics.DelphiController.Parse(Register=AllenNeuralDynamics.DelphiController.LeakState) => #25
    -> Condition NoLeak
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> WorkflowOutput
    -> StringProperty(Value="No Leak") => #27
    #25 -> Condition Leak
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> WorkflowOutput
    -> StringProperty(Value="LEAK ALERT!") => #29
    #27, #29 -> Merge
    -> VisualizerMapping => #31
    SubscribeSubject FlowRates
    -> MemberSelector(Selector=ADC0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as OdorDilutionFlowRate)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector="", ValueSelector=OdorDilutionFlowRate, SymbolType=None, LineWidth=1, Capacity=600, Min=nil, Max=nil)
    -> VisualizerMapping => #36
    SubscribeSubject FlowRates
    -> MemberSelector(Selector=ADC1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as SourceDilutionFlowRate)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector="", ValueSelector=SourceDilutionFlowRate, SymbolType=None, LineWidth=1, Capacity=600, Min=nil, Max=nil)
    -> VisualizerMapping => #41
    SubscribeSubject FlowRates
    -> MemberSelector(Selector=ADC2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as ManualFlowRate)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector="", ValueSelector=ManualFlowRate, SymbolType=None, LineWidth=1, Capacity=600, Min=nil, Max=nil)
    -> VisualizerMapping => #46
    SubscribeSubject FlowRates
    -> MemberSelector(Selector=ADC3)
    -> BehaviorSubject LeakFlowRate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new (it as LeakFlowRate)
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector="", ValueSelector=LeakFlowRate, SymbolType=None, LineWidth=1, Capacity=600, Min=nil, Max=nil)
    -> VisualizerMapping => #52
    Disable SubscribeSubject VideoFeed
    -> Disable MemberSelector(Selector=Value.Image)
    -> Disable VisualizerMapping => #55
    Disable SubscribeSubject Video1Feed
    -> Disable MemberSelector(Selector=Value.Image)
    -> Disable VisualizerMapping => #58
    #1, #5, #7, #11, #21, #31, #36, #41, #46, #52, #55, #58 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
      ColumnCount=4
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
    -> WorkflowOutput
