<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.deLuxDriver;assembly=AllenNeuralDynamics.deLuxDriver"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>DeluxCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM11</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DeluxEvents</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="GroupWorkflow">
        <Name>EnableLed</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateChannelEnablePayload">
                <p1:ChannelEnable>Channel1</p1:ChannelEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DeluxCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetLedCurrent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateChannelCurrentPayload">
                <p1:Channel1>1200</p1:Channel1>
                <p1:Channel2>0</p1:Channel2>
                <p1:Channel3>0</p1:Channel3>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DeluxCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TriggerSetup</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreatePwmEnablePayload">
                <p1:PwmEnable>Channel1</p1:PwmEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DeluxCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreatePwmFrequencyPayload">
                <p1:Channel1>1</p1:Channel1>
                <p1:Channel2>0</p1:Channel2>
                <p1:Channel3>0</p1:Channel3>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DeluxCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreatePwmDutyCyclePayload">
                <p1:Channel1>0.5</p1:Channel1>
                <p1:Channel2>0</p1:Channel2>
                <p1:Channel3>0</p1:Channel3>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DeluxCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateTriggerOutFrequencyPayload">
                <p1:Channel1>1</p1:Channel1>
                <p1:Channel2>0</p1:Channel2>
                <p1:Channel3>0</p1:Channel3>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DeluxCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateTriggerOutDutyCyclePayload">
                <p1:Channel1>0.5</p1:Channel1>
                <p1:Channel2>0.5</p1:Channel2>
                <p1:Channel3>0</p1:Channel3>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DeluxCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="FloatProperty">
            <Value>1</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DeluxEvents</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p1:Parse">
          <harp:Register xsi:type="p1:TimestampedTriggerOutEvent" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Seconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Difference">
            <dsp:Order>1</dsp:Order>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Divide" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="13" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>