<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.DelphiController;assembly=AllenNeuralDynamics.DelphiController"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Unit">
        <rx:Name>StartCameras</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HardwareSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CameraSettings.FrameRate</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Cam0FrameRate" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateCam0FrameRatePayload">
          <p2:Cam0FrameRate>0</p2:Cam0FrameRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HardwareSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CameraSettings1.FrameRate</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Cam1FrameRate" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateCam1FrameRatePayload">
          <p2:Cam1FrameRate>0</p2:Cam1FrameRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HardwareSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CameraSettings.DutyCycle</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Cam0DutyCycle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateCam0DutyCyclePayload">
          <p2:Cam0DutyCycle>0</p2:Cam0DutyCycle>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HardwareSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CameraSettings1.DutyCycle</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Cam1DutyCycle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateCam1DutyCyclePayload">
          <p2:Cam1DutyCycle>0</p2:Cam1DutyCycle>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateEnableCam0TriggerPayload">
          <p2:EnableCam0Trigger>1</p2:EnableCam0Trigger>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateEnableCam1TriggerPayload">
          <p2:EnableCam1Trigger>1</p2:EnableCam1Trigger>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiCommands</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Unit">
        <rx:Name>StopCameras</rx:Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateEnableCam0TriggerPayload">
          <p2:EnableCam0Trigger>0</p2:EnableCam0Trigger>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateEnableCam1TriggerPayload">
          <p2:EnableCam1Trigger>0</p2:EnableCam1Trigger>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="16" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="22" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>