<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:DataSchema;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LineName" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>OdorState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:SelectMany">
              <Name>ClosePortValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PortValveCommand</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>VacuumOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata.UseVacuum</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.SwitchTime1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CloseAllLines</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>CloseAllLines</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.SwitchTime2</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.02S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>StartVacuum</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>OpenVacuum</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>VacuumValveCommand</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.VacuumDelay</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.025S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CyclePortValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PortValveCommand</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata.PortValveCycleTime</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.025S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PortValveCommand</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LineName" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>OpenActiveLine</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="LineName" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LineCommand</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="LineName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:LineCommand">
                            <p1:LineName>OdorA</p1:LineName>
                            <p1:State>true</p1:State>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>LineCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.VacuumDuration</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.07S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>StopVacuum</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>VacuumValveCommand</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.ChargeTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>VacuumOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata.UseVacuum</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.SwitchTime1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CloseAllLines</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>CloseAllLines</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.SwitchTime2</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>OpenActiveLine</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="LineName" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LineCommand</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="LineName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:LineCommand">
                            <p1:LineName>OdorA</p1:LineName>
                            <p1:State>true</p1:State>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>LineCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.ChargeTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SustainedPoke</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PokeOnset</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RoiThreshold</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>RoiTriggered</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata.MinimumPokeTime</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.01S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PokeOffset</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>OpenPortValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PortValveCommand</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimulusDelivered</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.MinOdorDelivery</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>WaitForRelease</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PokeOffset</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentPokeState</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>AlreadyReleased</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Metadata.MaxOdorDelivery</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT8S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="10" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="10" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="34" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="13" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="19" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="21" To="46" Label="Source2" />
            <Edge From="22" To="27" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="33" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="53" Label="Source1" />
            <Edge From="34" To="39" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="45" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source2" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="51" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source2" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source2" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="60" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source2" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="63" To="64" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StateName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OdorA</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>