<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:HardwareSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:RuleSchema;assembly=Extensions"
                 xmlns:scg="clr-namespace:System.Collections.Generic;assembly=mscorlib"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.DelphiController;assembly=AllenNeuralDynamics.DelphiController"
                 xmlns:p5="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="HardwareSettings" />
        <Property Name="RuleSettings" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="HardwareSettings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>schemas\hardware-schema1.yml</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromYaml">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:HardwareSchema" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RuleSettings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:RuleSelector">
                <p2:Path>schemas\rule-8.yml</p2:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="p3:DeserializeFromYaml">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:RuleSchema" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DelphiController</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ControllerSettings</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="scg:IDictionary(sys:String,p3:StateDefinition)">
              <rx:Name>StateDictionary</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="scg:IDictionary(sys:String,p3:StateDefinition)">
              <rx:Name>TransitionState</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GenerateStateDictionary</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Rule.StateDefinitions</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Rule.StateDefinitions.Count</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>7</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ToDictionary">
                    <rx:KeySelector>Name</rx:KeySelector>
                    <rx:ElementSelector>it</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StateDictionary</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TransitionState</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DelphiController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>DelphiCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="ControllerSettings" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ControllerSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ComPort</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM5</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="GroupWorkflow">
              <Name>DisableCameraTriggers</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateEnableCamTriggerPayload">
                      <p4:EnableCamTrigger>0</p4:EnableCamTrigger>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DisableFSM</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateFSMStatePayload">
                      <p4:FSMState>0</p4:FSMState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>EnableValveLeds</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateEnableValveLedsPayload">
                      <p4:EnableValveLeds>1</p4:EnableValveLeds>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetMinimumPokeTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MinPokeTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MinimumPokeTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateMinimumPokeTimeUSPayload">
                      <p4:MinimumPokeTimeUS>10000</p4:MinimumPokeTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetMinimumOdorDeliveryTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MinOdorDeliveryTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MinOdorDeliveryTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateMinOdorDeliveryTimeUSPayload">
                      <p4:MinOdorDeliveryTimeUS>10000</p4:MinOdorDeliveryTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetFinalValveEnergizedTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>FinalValveEnergizedTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FinalValveEnergizedTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateFinalValveEnergizedTimeUSPayload">
                      <p4:FinalValveEnergizedTimeUS>110000</p4:FinalValveEnergizedTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetVacuumSetupTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>VacuumSetupTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="VacuumSetupTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateVacuumSetupTimeUSPayload">
                      <p4:VacuumSetupTimeUS>10000</p4:VacuumSetupTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetOdorTransitionTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OdorTransitionTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="OdorTransitionTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateOdorTransitionTimeUSPayload">
                      <p4:OdorTransitionTimeUS>20000</p4:OdorTransitionTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetPokePin</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PokePin</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PokePin" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreatePokePinPayload">
                      <p4:PokePin>22</p4:PokePin>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetPokePinInverted</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreatePokePinInvertedPayload">
                      <p4:PokePinInverted>1</p4:PokePinInverted>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetMaxOdorDeliveryTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllerSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MaxOdorDeliveryTimeUs</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MaxOdorDeliveryTimeUS" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateMaxOdorDeliveryTimeUSPayload">
                      <p4:MaxOdorDeliveryTimeUS>10000000</p4:MaxOdorDeliveryTimeUS>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ControllerReady</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="InitiateFSM" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
              <rx:Name>InitiateFSM</rx:Name>
            </Expression>
            <Expression xsi:type="p4:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p4:CreateFSMStatePayload">
                <p4:FSMState>1</p4:FSMState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="QueueOdor" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>QueueOdor</rx:Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="QueuedOdorMask" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="p4:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p4:CreateQueuedOdorMaskPayload">
                <p4:QueuedOdorMask>8</p4:QueuedOdorMask>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DelphiCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="31" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StateController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>CurrentState</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ControllerReady</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDictionary</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>DefaultState</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>OdorIndex</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>QueueOdor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>InitiateFSM</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>DefaultState</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BeginState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>BeginState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SelectState</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StateName</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateDictionary</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Key" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TryLookupOrDefault">
                      <p2:DefaultState>DefaultState</p2:DefaultState>
                      <p2:Key>OdorD</p2:Key>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>OdorIndex</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>QueueOdor</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DelphiEvents</Name>
                  </Expression>
                  <Expression xsi:type="p4:Parse">
                    <harp:Register xsi:type="p4:QueuedOdorMask" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>OdorConsumed</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:SByte">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StateComplete</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateName</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Default</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>DefaultState</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateForceFSMPayload">
                      <p4:ForceFSM>1</p4:ForceFSM>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>DelphiCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateComplete</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TransitionState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateComplete</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Key" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TryLookupOrDefault">
                      <p2:DefaultState>DefaultState</p2:DefaultState>
                      <p2:Key>OdorD</p2:Key>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TransitionsTo</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(it.Item1 as CurrentState, it.Item2 as TransitionState)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="27" Label="Source1" />
                  <Edge From="20" To="22" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="25" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TransitionState</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:UniformSampleStateProbabilities" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SampleWithoutReplacement</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Rule.SampleWithReplacement</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDictionary</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:UpdateTransitionState" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TransitionState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>SampleWithReplacement</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RuleSettings</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Rule.SampleWithReplacement</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BeginState</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="19" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="28" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="23" Label="Source1" />
            <Edge From="19" To="26" Label="Source2" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="29" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraController.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="p4:Parse">
              <harp:Register xsi:type="p4:TimestampedCamPinState" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraStarted</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SkipUntil" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FrameEvent</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraSettings.SerialNumber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:SerialNumber>24026619</spk:SerialNumber>
                <spk:ColorProcessing>Default</spk:ColorProcessing>
                <aeon:ExposureTime>7500</aeon:ExposureTime>
                <aeon:Gain>0</aeon:Gain>
                <aeon:Binning>1</aeon:Binning>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CameraFrame</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraFrame</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IsEmpty" />
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>CameraStarted</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraFrame</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameEvent</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>VideoFeed</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LoggingRootPath</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogController.bonsai">
              <Path>C:\Users\delphi_basement\Delphi\HIW\2026012901</Path>
              <ChunkSize>1</ChunkSize>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogJson.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>HardwareSettings</LogName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RuleSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>DelphiEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogJson.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>RuleSettings</LogName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PathPrefix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p6:AppendModalitySuffix">
                <p6:Modality>BehaviorVideos</p6:Modality>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>BehaviorVideos</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoFeed</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HardwareSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>CameraSettings.FrameRate</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FrameRate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HardwareSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>CameraSettings.FfmpegInput</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="InputArguments" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HardwareSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>CameraSettings.FfmpegOutput</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="OutputArguments" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HardwareSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>CameraSettings.CameraName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LogName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogVideo.bonsai">
                    <Heartbeats />
                    <ClosingDuration>PT30S</ClosingDuration>
                    <LogName>TopLeftCamera</LogName>
                    <FrameRate>60</FrameRate>
                    <OutputArguments>-vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v libx264 -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune film -preset fast -crf 21 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M</OutputArguments>
                    <InputArguments>-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear</InputArguments>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="16" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="16" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="16" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="16" Label="Source4" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source5" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PathPrefix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p6:AppendModalitySuffix">
                <p6:Modality>Behavior</p6:Modality>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>Behavior</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpLogging</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DelphiEvents</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
                          <LogName>DelphiController</LogName>
                          <Heartbeats>DelphiEvents</Heartbeats>
                          <ClosingDuration xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>DelphiControllerPath</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>PathPrefix</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>DelphiController</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>device.yml</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}\{1}\{2}</Format>
                                <Selector>Item1,Item2,Item3</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="5" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="5" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source3" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>HarpDelphiControllerGetMetadata</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>%YAML 1.1
---
# yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
device: DelphiController
whoAmI: 1407
firmwareVersion: "0.0"
hardwareTargets: "1.0"
registers:
    ValveState:
        address: 32
        type: U16
        access: Event
        description: "Set the enabled/disabled state (enabled = 1) of all valves"
    ValvesSet:
        address: 33
        type: U16
        maskType: ValveMask
        access: Write
        description: "Write a 1 to any bit to enable the corresponding valve."
    ValvesClear:
        address: 34
        type: U16
        maskType: ValveMask
        access: Write
        description: "Write a 1 to any bit to disable the corresponding valve."
    ValveConfig0: &amp;valveConfig
        address: 35
        type: U8
        length: 12
        access: Write
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve0."
    ValveConfig1:
        &lt;&lt;: *valveConfig
        address: 36
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve1."
    ValveConfig2:
        &lt;&lt;: *valveConfig
        address: 37
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve2."
    ValveConfig3:
        &lt;&lt;: *valveConfig
        address: 38
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve3."
    ValveConfig4:
        &lt;&lt;: *valveConfig
        address: 39
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve4."
    ValveConfig5:
        &lt;&lt;: *valveConfig
        address: 40
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve5."
    ValveConfig6:
        &lt;&lt;: *valveConfig
        address: 41
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve6."
    ValveConfig7:
        &lt;&lt;: *valveConfig
        address: 42
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve7."
    ValveConfig8:
        &lt;&lt;: *valveConfig
        address: 43
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve8."
    ValveConfig9:
        &lt;&lt;: *valveConfig
        address: 44
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve9."
    ValveConfig10:
        &lt;&lt;: *valveConfig
        address: 45
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve10."
    ValveConfig11:
        &lt;&lt;: *valveConfig
        address: 46
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve11."
    ValveConfig12:
        &lt;&lt;: *valveConfig
        address: 47
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve12."
    ValveConfig13:
        &lt;&lt;: *valveConfig
        address: 48
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve13."
    ValveConfig14:
        &lt;&lt;: *valveConfig
        address: 49
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve14."
    ValveConfig15:
        &lt;&lt;: *valveConfig
        address: 50
        description: "the hit duty cycle (float: 0 - 1.0), hold duty cycle (float: 0 - 1.0), and hit duration in microseconds (U32) for Valve15."
    AuxGPIODir:
        address: 51
        type: U8
        maskType: AuxGPIOMask
        access: Write
        description: "Specify each auxiliary GPIO pin as an input (0) or output (1)."
    AuxGPIOState:
        address: 52
        type: U8
        maskType: AuxGPIOMask
        access: Write
        description: "Set the state (on or off) of any auxiliary GPIO pins specified as outputs."
    AuxGPIOSet:
        address: 53
        type: U8
        maskType: AuxGPIOMask
        access: Write
        description: "When writing a 1 to any bit, turn on the specified auxiliary GPIO pins specified as outputs."
    AuxGPIOClear:
        address: 54
        type: U8
        maskType: AuxGPIOMask
        access: Write
        description: "When writing a 1 to any bit, Turn off the specified auxiliary GPIO pins specified as outputs."
    AuxGPIOInputRiseEvent:
        address: 55
        type: U8
        maskType: AuxGPIOMask
        access: Event
        description: ""
    AuxGPIOInputFallEvent:
        address: 56
        type: U8
        maskType: AuxGPIOMask
        access: Event
        description: ""
    AuxGPIORisingInputs:
        address: 57
        type: U8
        maskType: AuxGPIOMask
        access: Write
        description: ""
    AuxGPIOFallingInputs:
        address: 58
        type: U8
        maskType: AuxGPIOMask
        access: Write
        description: ""
    PokePin:
        address: 59
        type: U8
        access: Write
        description: "which poke ports are active."
    PokePinInverted:
        address: 60
        type: U8
        access: Write
        description: "Which poke ports are inverted (i.e: transition from HIGH to LOW when a poke occurs)."
    PokeState:
        address: 61
        type: U8
        access: Event
        description: "The state of the poke port. An event will be triggered given a poke/ beam break that is greater than the min poke time."
    RawPokeState:
        address: 62
        type: U8
        access: Event
        description: "The raw state of the poke pin. Events will be triggered at the onset of a beam break (1) and offset (0)."
    PokeDometer:
        address: 63
        type: U32
        access: Read
        description: "number of mouse pokes per port since boot or reset."
    FSMState:
        address: 64
        type: U8
        access: Write
        description: "Enable (1) (aka reset) or Disable (0) the poke handling state machine. Note that QueuedOdorIndex must be specified first. Disabling and then enabling a previously-enabled FSM will reset it to its starting state."
    ForceFSM:
        address: 65
        type: U8
        access: Write
        description: "Force the poke handling state machine to iterate as if handling a mouse poke. PokeDometers are not incremented."
    QueuedOdorMask:
        address: 66
        type: U16
        access: Event
        description: "Queued odors (value: odor valve mask) that will be delivered to the odor port given a register poke. After odors have been dispensed, the register will be set to 0, which indicates that new odors are needed"
    VacuumCloseTimeUS:
        address: 67
        type: U32
        access: Write
        description: "Time alotted (in microseconds) for the vacuum valve to close."
    MinOdorDeliveryTimeUS:
        address: 68
        type: U32
        access: Write
        description: "Minimum time alotted (in microseconds) for the odor delivery state."
    MaxOdorDeliveryTimeUS:
        address: 69
        type: U32
        access: Write
        description: "Maximum time alotted (in microseconds) for the odor delivery state."
    OdorTransitionTimeUS:
        address: 70
        type: U32
        access: Write
        description: "Time alotted (in microseconds) before the vacuum turns on to remove the current odor."
    VacuumSetupTimeUS:
        address: 71
        type: U32
        access: Write
        description: "Time alotted (in microseconds) for the vacuum to open."
    FinalValveEnergizedTimeUS:
        address: 72
        type: U32
        access: Write
        description: "Time alotted (in microseconds) for the final valve to open and remain on."
    MinimumPokeTimeUS:
        address: 73
        type: U32
        access: Write
        description: "Minimum time (in microseconds) necessary for a mouse poke port beam to be broken before being interpretted as a poke."
    CamPin:
        address: 74
        type: U8
        access: Write
        description: "The GPIO output pin used for camera triggering. Default pin is 26."
    CamPinState:
        address: 75
        type: U8
        access: Event
        description: "Event is initiated when a rising edge of the camera triggered signal (PWM) is detected. The actual value of the pin doesn't change."
    FrameRate:
        address: 76
        type: U32
        access: Write
        description: "Set the frame rate of the camera trigger/ frequency of the PWM signal."
    DutyCycle:
        address: 77
        type: Float
        access: Write
        description: "Set the duty cycle of the PWM. Default and recommend is 0.5 for producing a square wave."
    EnableCamTrigger:
        address: 78
        type: U8
        access: Write
        description: "Enable (1) and disable (0) camera triggering/ the PWM signal."
    EnableValveLeds:
        address: 79
        type: U8
        access: Write
        description: "Enable (1) and disable (0) valve LEDs."

groupMasks:
    ValveMask:
        description: "Valve that can be configured/enabled/disabled"
        values:
            Valve0: 0x0
            Valve1: 0x1
            Valve2: 0x2
            Valve3: 0x3
            Valve4: 0x4
            Valve5: 0x5
            Valve6: 0x6
            Valve7: 0x7
            Valve8: 0x8
            Valve9: 0x9
            Valve10: 0xA
            Valve11: 0xB
            Valve12: 0xC
            Valve13: 0xD
            Valve14: 0xE
            Valve15: 0xF
            AllValves: 0xFFFF
    AuxGPIOMask:
        description: "Auxiliary GPIO index."
        values:
            AuxGPIO0: 0x01
            AuxGPIO1: 0x02
            AuxGPIO2: 0x04
            AuxGPIO3: 0x08
            AuxGPIO4: 0x10
            AuxGPIO5: 0x20
            AuxGPIO6: 0x40
            AuxGPIO7: 0x80</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="io:WriteAllText">
                            <io:Path>C:\Users\delphi_basement\Delphi\HIW\2026012901\2026-01-28T22-29-27\behavior\DelphiController\device.yml</io:Path>
                            <io:Overwrite>false</io:Overwrite>
                            <io:Append>false</io:Append>
                          </Combinator>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Unit" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>StartRobocopy</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
                <rx:Name>StartRobocopy</rx:Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>Robocopy</Name>
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="StartCamerasKey" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton A Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>StartCamera</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="StopCamerasKey" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton A Alt</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>StopCamera</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DelphiEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:SynchronizeTimestamp" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DelphiCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DelphiEvents</Name>
      </Expression>
      <Expression xsi:type="p4:Parse">
        <harp:Register xsi:type="p4:QueuedOdorMask" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.ToString()
 </scr:Expression>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>DelphiEvents</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentState</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoFeed</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:ColumnCount>3</viz:ColumnCount>
        <viz:RowCount>2</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans>
          <viz:CellSpan ColumnSpan="1" RowSpan="1" />
          <viz:CellSpan ColumnSpan="1" RowSpan="1" />
          <viz:CellSpan ColumnSpan="1" RowSpan="1" />
          <viz:CellSpan ColumnSpan="3" RowSpan="1" />
        </viz:CellSpans>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="29" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="29" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="29" Label="Source3" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source4" />
    </Edges>
  </Workflow>
</WorkflowBuilder>