<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>PortController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM5</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:AuxInState" />
            </Expression>
            <Expression xsi:type="HasFlag">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:AuxiliaryInputs">
                <Value>Aux0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>PokeOnset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PokeOnset</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>PokeOffset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PokeOffset</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Write</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedOutputClear" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>PortValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:DigitalOutputs">
                      <Value>Out1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PortValveClosed</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Text><![CDATA[Selects active odor in range [0,7] where 0 is the default odor.]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ActiveOdor</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Text><![CDATA[Controls the state of the port valve.
 - **true**: open the port valve
 - **false**: close the port valve]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PortValve</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PortValve</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>OpenPortValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputSetPayload">
                <p1:OutputSet>Out1</p1:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ClosePortValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputClearPayload">
                <p1:OutputClear>Out1</p1:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ActiveOdor</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>CloseCurrentOdorValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateOutputClearPayload">
                      <p1:OutputClear>Out6 Out7 Out8 Out9</p1:OutputClear>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Commands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Odor0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputSetPayload">
                <p1:OutputSet>Out6</p1:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Odor1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputSetPayload">
                <p1:OutputSet>Out7</p1:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Odor2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputSetPayload">
                <p1:OutputSet>Out8</p1:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Odor3</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputSetPayload">
                <p1:OutputSet>Out9</p1:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="22" To="26" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="30" To="34" Label="Source1" />
            <Edge From="30" To="37" Label="Source1" />
            <Edge From="30" To="40" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="43" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="43" Label="Source2" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="43" Label="Source3" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source4" />
            <Edge From="43" To="44" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TrialIndex</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PokeOnset</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>OpenPortValve</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PortValve</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>OdorTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PokeOffset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ClosePortValve</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PortValve</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SelectNextOdor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="OdorCount" />
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SwitchOdor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>ClearActiveOdor</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>-1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ActiveOdor</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.02S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>SetActiveOdor</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ActiveOdor</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>UpdateTrialIndex</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialIndex</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Escape</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>-1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ActiveOdor</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>