<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:LoadSessionSettings">
          <p1:Path>DelphiSession.yml</p1:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:SynchronizeTimestamp" />
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="harp:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="harp:CreateOperationControlPayload">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:MuteReplies>false</harp:MuteReplies>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HarpProperties.ShowHarpLeds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:BooleanToLedState" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="VisualIndicators" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Device">
          <harp:OperationMode>Standby</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:VisualIndicators>Off</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM4</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:ConfigurePwm">
          <p2:PwmChannels>Pwm2</p2:PwmChannels>
          <p2:Frequency>500</p2:Frequency>
          <p2:DutyCycle>10</p2:DutyCycle>
          <p2:PulseCount>0</p2:PulseCount>
          <p2:TriggerSource>Software</p2:TriggerSource>
          <p2:EventConfig>Enabled</p2:EventConfig>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreatePwmAndStimEnablePayload">
          <p2:PwmAndStimEnable>Pwm2ToOut9</p2:PwmAndStimEnable>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreatePwmStartPayload">
          <p2:PwmStart>Pwm2</p2:PwmStart>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="p2:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="p2:PwmRiseEvent" />
      </Expression>
      <Expression xsi:type="p2:Parse">
        <harp:Register xsi:type="p2:TimestampedPwmRiseEvent" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HardwareClock</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>HarpWait</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HardwareClock</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>TimeElapsed</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="DueTime" />
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="DoubleProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="15" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>